#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "lookup.hs_"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl"
#include "HSLML_STARLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SANGERCLEANUP_PROCESSES {
  variable arrHHSDevices[];
  variable arrTiltModules[];
  variable blnSimulationMode;
  sequence seqTips_NTR300;
  sequence seq_BindOnMag;
  sequence seq_Waste;
  sequence seq_Source;
  sequence seq_CORE;
  sequence seq_Destination;
  sequence seq_Beads;
  sequence seq_Elution;
  sequence seq_Bind;
  sequence seq_Ethanol;
  sequence seqTips_NTREmptyStack;
  sequence seq_HHS;
  function Abstract(  ) void ;
  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & io_seqToIncrement ) void ;
  function HHS_Heat( variable intTemp ) void ;
  function HHS_Lock( variable blnGripState ) void ;
  function HHS_Shake( variable intSpeed ) void ;
  function PIP_96H_DWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject, variable & blnIsTwoPlate ) void ;
  function PIP_BeadAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltBeadVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable blnTipEject ) void ;
  function PIP_SampleAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSampleVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixHeight, variable fltAspMixVolume, variable fltDispHeight, variable intDispMixCycles, variable fltDispMixHeight, variable fltDispMixVolume ) void ;
  function SYSTEM_Abort( device & ML_STAR ) void ;
  function SYSTEM_Close( device & ML_STAR ) void ;
  function SYSTEM_Init( device & ML_STAR, sequence i_seqCORE, sequence i_seqNTRTips, sequence i_seqNTREmptyStack, sequence & io_seqSource, sequence & io_seqBind, sequence & io_seqDestination, sequence & io_seqBindOnMag, sequence i_seqBeads, sequence i_seqElution, sequence i_seqEthanol, sequence i_seqWaste, sequence i_seqHHS, variable blnSim, variable & blnIsTwoPlate ) void ;
  function TMR_Start( timer & strTimer, variable intTime ) void ;
  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void ;
  function TRP_DWP_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function TRP_PCR_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function Abstract(  ) void {
  }

  function HHS_Heat( variable intTemp ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Heat"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(""), arrHHSDevices);
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function HHS_Shake( variable intSpeed ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Shake"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intSpeed != 0)
        {
          HSLHamHeaterShaker::StartShaker(loopCounter1, intSpeed);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> arrHHSDevices: "), arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("-- Started shaking devHHS_"), loopCounter1, Translate(" at "), intSpeed, Translate("rpm"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopShaker(loopCounter1);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Stopped shaking HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SIM] Simulating HHS shake at: "), intSpeed, Translate(" RPM"), Translate(""));
    }
  }

  function SYSTEM_Init( device & ML_STAR, sequence i_seqCORE, sequence i_seqNTRTips, sequence i_seqNTREmptyStack, sequence & io_seqSource, sequence & io_seqBind, sequence & io_seqDestination, sequence & io_seqBindOnMag, sequence i_seqBeads, sequence i_seqElution, sequence i_seqEthanol, sequence i_seqWaste, sequence i_seqHHS, variable blnSim, variable & blnIsTwoPlate ) void {
    private variable strHHSDevice;
    private variable loopCounter1;
    private variable rtnHHS;
    private dialog customDialog_1;
    private variable intPlateNumber;
    private variable rtnValue;
    private variable intLoopNumber;
    private variable loopCounter2;
    blnIsTwoPlate = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("="));
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("="));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Init"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = blnSim;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    intPlateNumber = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    if (intPlateNumber == 1)
    {
      blnIsTwoPlate = 0;
    }
    else
    {
      blnIsTwoPlate = 1;
    }
    arrHHSDevices.SetSize(0);
    HSLHamHeaterShaker::SetSimulation(blnSimulationMode);
    {
      for(loopCounter1 = 0; loopCounter1 < 1;)
      {
        loopCounter1 = loopCounter1 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter1);
        rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(loopCounter1, strHHSDevice);
        arrHHSDevices.AddAsLast(strHHSDevice);
        if (rtnHHS != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising HHS module = "), arrHHSDevices.ElementAt( loopCounter1 -1));
        }
        HSLHamHeaterShaker::StopAllShaker();
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Array of HHS modules, arrHHSDevices = "), arrHHSDevices);
    intLoopNumber = 96;
    SeqRemoveAll(seq_CORE);
    SeqCopySequence(seq_CORE, i_seqCORE);
    SeqRemoveAll(seqTips_NTR300);
    SeqCopySequence(seqTips_NTR300, i_seqNTRTips);
    SeqRemoveAll(seqTips_NTREmptyStack);
    SeqCopySequence(seqTips_NTREmptyStack, i_seqNTREmptyStack);
    SeqRemoveAll(seq_Beads);
    SeqCopySequence(seq_Beads, i_seqBeads);
    SeqRemoveAll(seq_Elution);
    SeqCopySequence(seq_Elution, i_seqElution);
    SeqRemoveAll(seq_Ethanol);
    SeqCopySequence(seq_Ethanol, i_seqEthanol);
    SeqRemoveAll(seq_Waste);
    SeqCopySequence(seq_Waste, i_seqWaste);
    SeqRemoveAll(seq_HHS);
    SeqCopySequence(seq_HHS, i_seqHHS);
    if (intPlateNumber == 1)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqSource, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqSource);
      SeqRemoveAll(seq_Source);
      SeqCopySequence(seq_Source, io_seqSource);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seq_Source);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqBind, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqBind);
      SeqRemoveAll(seq_Bind);
      SeqCopySequence(seq_Bind, io_seqBind);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seq_Bind);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqDestination, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqDestination);
      SeqRemoveAll(seq_Destination);
      SeqCopySequence(seq_Destination, io_seqDestination);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqBindOnMag, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqBindOnMag);
      SeqRemoveAll(seq_BindOnMag);
      SeqCopySequence(seq_BindOnMag, io_seqBindOnMag);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqBindOnMag);
    }
    else
    {
      SeqRemoveAll(seq_Source);
      SeqCopySequence(seq_Source, io_seqSource);
      SeqRemoveAll(seq_Bind);
      SeqCopySequence(seq_Bind, io_seqBind);
      SeqRemoveAll(seq_Destination);
      SeqCopySequence(seq_Destination, io_seqDestination);
      SeqRemoveAll(seq_BindOnMag);
      SeqCopySequence(seq_BindOnMag, io_seqBindOnMag);
    }
  }

  function TMR_Start( timer & strTimer, variable intTime ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_Start"));
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument in simulation. Shortening timer."), Translate(""));
      intTime = 3;
    }
    if( 0 == strTimer.SetTimer(intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started new timer for: "), intTime, Translate(" seconds"), Translate(""));
  }

  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void {
    rtnTimerStopped = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_WaitFor"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for timer to complete..."), Translate(""));
    rtnTimerStopped = strTimer.WaitTimer(hslTrue, hslTrue);
    if (0 == rtnTimerStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Timer complete."), Translate(""));
  }

  function SYSTEM_Close( device & ML_STAR ) void {
    private dialog customDialog_2;
    private variable rtn;
    private variable loopCounter2;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Close"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    rtn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Complete Successfully #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function SYSTEM_Abort( device & ML_STAR ) void {
    private dialog customDialog_3;
    private variable rtn;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    private variable loopCounter2;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Abort"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    rtn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Method aborted"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Aborted #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function HHS_Lock( variable blnGripState ) void {
    private variable intModuleCount;
    private variable loopCounter1;
    private variable rtn;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Locking HHS..."), Translate(""));
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnGripState == 1)
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 0);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error opening HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Open;");
          }
        }
        else
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 1);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Close;");
          }
        }
      }
    }
  }

  function TRP_DWP_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intEjectTool;
    private variable loopCounter1;
    private variable intGripHeight;
    private variable intNumberOfTransports;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_DWP_CORE"));
    intEjectTool = 0;
    intGripWidth = 80;
    intGripHeight = 8.5;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    HHS_Lock(1);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    HHS_Lock(0);
  }

  function TRP_PCR_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intEjectTool;
    private variable loopCounter1;
    private variable intGripHeight;
    private variable intNumberOfTransports;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_PCR_CORE"));
    intEjectTool = 0;
    intGripWidth = 80;
    intGripHeight = 8.5;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    HHS_Lock(1);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    HHS_Lock(0);
  }

  function PIP_BeadAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltBeadVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable blnTipEject ) void {
    private dialog customDialog_4;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private variable rtnLookup;
    private variable loopCounter1;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_BeadAddition"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltBeadVolume  = "), fltBeadVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== blnTipEject = "), blnTipEject);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    if (fltBeadVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_5.InitCustomDialog("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");
      customDialog_5.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_5.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_5.ShowCustomDialog();
      rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
      fltBeadVolume = customDialog_5.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltBeadVolume = "), fltBeadVolume);
      }
    }
    else
    {
      if (fltBeadVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_6.InitCustomDialog("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");
        customDialog_6.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_6.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_6.ShowCustomDialog();
        rtnValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        fltBeadVolume = customDialog_6.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltBeadVolume = "), fltBeadVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Pipetting variables successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      loopCounter1 = 0;
      while (
         (i_seqDestination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqDestination, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (
           (i_seqDestination.GetCurrentPosition() > 0 && i_seqDestination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqDestination.SetMax(i_seqDestination.GetTotal());
    }
    i_seqDestination.SetCurrentPosition(1);
    if (blnTipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_BeadAddition"));
  }

  function PIP_96H_DWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject, variable & blnIsTwoPlate ) void {
    private dialog customDialog_7;
    private dialog customDialog_8;
    private dialog customDialog_9;
    private dialog customDialog_10;
    private variable intTipType;
    private variable rtnLookup;
    private variable intTotalPositions;
    private variable loopCounter2;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private dialog customDialog_11;
    private variable intMixCycleMax;
    private dialog customDialog_12;
    private dialog customDialog_13;
    private dialog customDialog_14;
    private dialog customDialog_15;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== blnTipEject = "), blnTipEject);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    intMixCycleMax = 99;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_14.InitCustomDialog("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");
      customDialog_14.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_14.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_14.ShowCustomDialog();
      rtnValue = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_14.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_15.InitCustomDialog("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");
        customDialog_15.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_15.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_15.ShowCustomDialog();
        rtnValue = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_15.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles < intMixCycleMax)
      {
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_11.InitCustomDialog("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");
          customDialog_11.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_11.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_11.ShowCustomDialog();
          rtnValue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_11.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_12.InitCustomDialog("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");
        customDialog_12.SetCustomDialogProperty( "numeric1.Maximum", intMixCycleMax );
        customDialog_12.ShowCustomDialog();
        rtnValue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_12.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      if(0){
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_13.InitCustomDialog("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");
          customDialog_13.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_13.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_13.ShowCustomDialog();
          rtnValue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_13.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(i_seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
      rtnValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_10.InitCustomDialog("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");
      customDialog_10.ShowCustomDialog();
      rtnValue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
    intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (intTipType != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
      rtnValue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (blnTipEject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
    }
    if(0){
      if (blnIsTwoPlate == 1)
      {
        DATA_SequenceIncrement(blnIsTwoPlate, i_seqDestination);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
  }

  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & io_seqToIncrement ) void {
    private variable intTotalPositions;
    private variable intExpectedPositions;
    private variable intCurrentPosition;
    private variable strSeqName;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
    intExpectedPositions = 192;
    intTotalPositions = SeqGetTotal(io_seqToIncrement);
    if (intTotalPositions == intExpectedPositions)
    {
      intCurrentPosition = io_seqToIncrement.GetCurrentPosition();
      if (intCurrentPosition == 1)
      {
        io_seqToIncrement.SetCurrentPosition(97);
      }
      if (intCurrentPosition == 97)
      {
        SeqResetSequenceIndexes(io_seqToIncrement);
      }
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqToIncrement);
    }
    else
    {
      strSeqName = SeqGetName(io_seqToIncrement);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("===== The following sequence: '"), strSeqName, Translate("' does not require incrementation. "), Translate("\n The sequence has not been altered by the sub-method."));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
  }

  function PIP_SampleAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSampleVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixHeight, variable fltAspMixVolume, variable fltDispHeight, variable intDispMixCycles, variable fltDispMixHeight, variable fltDispMixVolume ) void {
    private variable arrApprovedLQC[];
    private dialog customDialog_16;
    private dialog customDialog_17;
    private dialog customDialog_18;
    private dialog customDialog_19;
    private variable fltMixCyclesMax;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private dialog customDialog_20;
    private dialog customDialog_21;
    private dialog customDialog_22;
    private dialog customDialog_23;
    private variable rtnLookup;
    private variable loopCounter1;
    private dialog customDialog_24;
    private dialog customDialog_25;
    private dialog customDialog_26;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SampleAddition"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltSampleVolume = "), fltSampleVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intDispMixCycles = "), intDispMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispMixHeight = "), fltDispMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispMixVolume = "), fltDispMixVolume);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    fltMixCyclesMax = 99;
    if (fltSampleVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_16.InitCustomDialog("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");
      customDialog_16.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_16.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_16.ShowCustomDialog();
      rtnValue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
      fltSampleVolume = customDialog_16.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSampleVolume = "), fltSampleVolume);
      }
    }
    else
    {
      if (fltSampleVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_18.InitCustomDialog("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");
        customDialog_18.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_18.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_18.ShowCustomDialog();
        rtnValue = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
        fltSampleVolume = customDialog_18.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSampleVolume = "), fltSampleVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_23.InitCustomDialog("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");
        customDialog_23.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_23.ShowCustomDialog();
        rtnValue = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_23.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      else
      {
        if (fltAspMixVolume < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_22.InitCustomDialog("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");
          customDialog_22.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_22.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_22.ShowCustomDialog();
          rtnValue = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_22.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
        else
        {
          if (fltAspMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_21.InitCustomDialog("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");
            customDialog_21.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_21.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_21.ShowCustomDialog();
            rtnValue = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
            fltAspMixVolume = customDialog_21.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
            }
          }
        }
      }
    }
    if (intDispMixCycles > 0)
    {
      if (intDispMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_24.InitCustomDialog("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");
        customDialog_24.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_24.ShowCustomDialog();
        rtnValue = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
        intDispMixCycles = customDialog_24.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intDispMixCycles = "), intDispMixCycles);
        }
      }
      else
      {
        if (intDispMixCycles < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_25.InitCustomDialog("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");
          customDialog_25.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_25.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_25.ShowCustomDialog();
          rtnValue = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
          fltDispMixVolume = customDialog_25.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltDispMixVolume = "), fltDispMixVolume);
          }
        }
        else
        {
          if (fltDispMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_26.InitCustomDialog("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");
            customDialog_26.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_26.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_26.ShowCustomDialog();
            rtnValue = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
            fltDispMixVolume = customDialog_26.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltDispMixVolume = "), fltDispMixVolume);
            }
          }
        }
      }
    }
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_20.InitCustomDialog("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");
      customDialog_20.ShowCustomDialog();
      rtnValue = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      loopCounter1 = 0;
      while (
         (i_seqDestination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqDestination, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (
           (i_seqDestination.GetCurrentPosition() > 0 && i_seqDestination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqDestination.SetMax(i_seqDestination.GetTotal());
    }
    i_seqDestination.SetCurrentPosition(1);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SampleAddition"));
  }
} // library namespace
