#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "lookup.hs_"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl"
#include "HSLML_STARLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SANGERCLEANUP_PROCESSES {
  variable arrHHSDevices[];
  variable arrTiltModules[];
  variable blnSimulationMode;
  sequence seqTips_NTR300;
  sequence seq_BindOnMag;
  sequence seq_Waste;
  sequence seq_Source;
  sequence seq_CORE;
  sequence seq_Destination;
  sequence seq_Beads;
  sequence seq_Elution;
  sequence seq_Bind;
  sequence seq_Ethanol;
  sequence seqTips_NTREmptyStack;
  sequence seq_HHS;
  function Abstract(  ) void ;
  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & io_seqToIncrement ) void ;
  function HHS_Heat( variable intTemp ) void ;
  function HHS_Lock( variable blnGripState ) void ;
  function HHS_Shake( variable intSpeed ) void ;
  function PIP_96H_DWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject ) void ;
  function PIP_96H_DWPToSWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void ;
  function PIP_96H_ResToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable fltDispHeight ) void ;
  function PIP_96H_SWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable intDispMixCycles, variable fltDispMixVolume, variable fltDispMixHeight, variable blnDispMixFollow ) void ;
  function PIP_BeadAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltBeadVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable intMixCycles, variable fltMixHeight, variable fltMixVolume, variable blnTipEject ) void ;
  function PIP_ElutionAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltElutionVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable intMixCycles, variable fltMixVolume, variable fltMixHeight, variable blnTipEject ) void ;
  function PIP_ElutionTransfer( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltElutionVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void ;
  function PIP_EthanolWashes( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, sequence & i_seqWaste, variable fltWashVolume, variable strEthanolAspLiquidClass, variable fltEthanolAspHeight, variable strWashDispLiquidClass, variable fltWashDispHeight, variable fltWasteAspHeight, variable strWasteLiquidClass, variable fltWasteDispHeight, variable fltFinalWasteRemovalVolume, variable fltFinalWasteDispHeight ) void ;
  function PIP_SampleAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSampleVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixHeight, variable fltAspMixVolume, variable fltDispHeight, variable blnDispMixFollow, variable intDispMixCycles, variable fltDispMixHeight, variable fltDispMixVolume ) void ;
  function PIP_SupernatantRemoval( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSupernatantVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void ;
  function SYSTEM_Abort( device & ML_STAR ) void ;
  function SYSTEM_Close( device & ML_STAR ) void ;
  function SYSTEM_Init( device & ML_STAR, sequence i_seqCORE, sequence i_seqNTRTips, sequence i_seqNTREmptyStack, sequence & io_seqSource, sequence & io_seqBind, sequence & io_seqDestination, sequence & io_seqBindOnMag, sequence i_seqBeads, sequence i_seqElution, sequence i_seqEthanol, sequence i_seqWaste, sequence i_seqHHS, variable blnSim, variable & blnIsTwoPlate ) void ;
  function TMR_Start( timer & strTimer, variable intTime ) void ;
  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void ;
  function TRP_DWP_CORE( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable i_blnEjectTool ) void ;
  function TRP_SWP_CORE( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable i_blnEjectTool ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
  }

  function Abstract(  ) void {
  }

  function HHS_Heat( variable intTemp ) void {
    private variable loopCounter1;
    private variable intModuleCount;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Heat"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(""), arrHHSDevices);
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function HHS_Shake( variable intSpeed ) void {
    private variable loopCounter1;
    private variable intModuleCount;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("HHS_Shake"));
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intSpeed != 0)
        {
          HSLHamHeaterShaker::StartShaker(loopCounter1, intSpeed);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> arrHHSDevices: "), arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("-- Started shaking devHHS_"), loopCounter1, Translate(" at "), intSpeed, Translate("rpm"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopShaker(loopCounter1);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Stopped shaking HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SIM] Simulating HHS shake at: "), intSpeed, Translate(" RPM"), Translate(""));
    }
  }

  function SYSTEM_Init( device & ML_STAR, sequence i_seqCORE, sequence i_seqNTRTips, sequence i_seqNTREmptyStack, sequence & io_seqSource, sequence & io_seqBind, sequence & io_seqDestination, sequence & io_seqBindOnMag, sequence i_seqBeads, sequence i_seqElution, sequence i_seqEthanol, sequence i_seqWaste, sequence i_seqHHS, variable blnSim, variable & blnIsTwoPlate ) void {
    private variable strHHSDevice;
    private variable loopCounter1;
    private variable rtnHHS;
    private dialog customDialog_1;
    private variable intPlateNumber;
    private variable rtnValue;
    private variable intLoopNumber;
    private variable loopCounter2;
    blnIsTwoPlate = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("="));
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("="));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Init"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = blnSim;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    intPlateNumber = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
    }
    if (intPlateNumber == 1)
    {
      blnIsTwoPlate = 0;
    }
    else
    {
      blnIsTwoPlate = 1;
    }
    arrHHSDevices.SetSize(0);
    HSLHamHeaterShaker::SetSimulation(blnSimulationMode);
    {
      for(loopCounter1 = 0; loopCounter1 < 1;)
      {
        loopCounter1 = loopCounter1 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter1);
        rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(loopCounter1, strHHSDevice);
        arrHHSDevices.AddAsLast(strHHSDevice);
        if (rtnHHS != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising HHS module = "), arrHHSDevices.ElementAt( loopCounter1 -1));
        }
        HSLHamHeaterShaker::StopAllShaker();
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Array of HHS modules, arrHHSDevices = "), arrHHSDevices);
    intLoopNumber = 96;
    SeqRemoveAll(seq_CORE);
    SeqCopySequence(seq_CORE, i_seqCORE);
    SeqRemoveAll(seqTips_NTR300);
    SeqCopySequence(seqTips_NTR300, i_seqNTRTips);
    SeqRemoveAll(seqTips_NTREmptyStack);
    SeqCopySequence(seqTips_NTREmptyStack, i_seqNTREmptyStack);
    SeqRemoveAll(seq_Beads);
    SeqCopySequence(seq_Beads, i_seqBeads);
    SeqRemoveAll(seq_Elution);
    SeqCopySequence(seq_Elution, i_seqElution);
    SeqRemoveAll(seq_Ethanol);
    SeqCopySequence(seq_Ethanol, i_seqEthanol);
    SeqRemoveAll(seq_Waste);
    SeqCopySequence(seq_Waste, i_seqWaste);
    SeqRemoveAll(seq_HHS);
    SeqCopySequence(seq_HHS, i_seqHHS);
    if (intPlateNumber == 1)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqSource, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqSource);
      SeqRemoveAll(seq_Source);
      SeqCopySequence(seq_Source, io_seqSource);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seq_Source);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqBind, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqBind);
      SeqRemoveAll(seq_Bind);
      SeqCopySequence(seq_Bind, io_seqBind);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seq_Bind);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqDestination, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqDestination);
      SeqRemoveAll(seq_Destination);
      SeqCopySequence(seq_Destination, io_seqDestination);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
      {
        for(loopCounter2 = 0; loopCounter2 < intLoopNumber;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqRemoveAt(io_seqBindOnMag, 97);
        }
      }
      SeqResetSequenceIndexes(io_seqBindOnMag);
      SeqRemoveAll(seq_BindOnMag);
      SeqCopySequence(seq_BindOnMag, io_seqBindOnMag);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqBindOnMag);
    }
    else
    {
      SeqRemoveAll(seq_Source);
      SeqCopySequence(seq_Source, io_seqSource);
      SeqRemoveAll(seq_Bind);
      SeqCopySequence(seq_Bind, io_seqBind);
      SeqRemoveAll(seq_Destination);
      SeqCopySequence(seq_Destination, io_seqDestination);
      SeqRemoveAll(seq_BindOnMag);
      SeqCopySequence(seq_BindOnMag, io_seqBindOnMag);
    }
  }

  function TMR_Start( timer & strTimer, variable intTime ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_Start"));
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument in simulation. Shortening timer."), Translate(""));
      intTime = 3;
    }
    if( 0 == strTimer.SetTimer(intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started new timer for: "), intTime, Translate(" seconds"), Translate(""));
  }

  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void {
    rtnTimerStopped = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TMR_WaitFor"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for timer to complete..."), Translate(""));
    rtnTimerStopped = strTimer.WaitTimer(hslTrue, hslTrue);
    if (0 == rtnTimerStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Timer complete."), Translate(""));
  }

  function SYSTEM_Close( device & ML_STAR ) void {
    private dialog customDialog_2;
    private variable rtn;
    private variable loopCounter2;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Close"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    rtn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Complete Successfully #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function SYSTEM_Abort( device & ML_STAR ) void {
    private dialog customDialog_3;
    private variable rtn;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    private variable loopCounter2;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("SYSTEM_Abort"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    rtn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Method aborted"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Aborted #################"));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function HHS_Lock( variable blnGripState ) void {
    private variable intModuleCount;
    private variable loopCounter1;
    private variable rtn;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Locking HHS..."), Translate(""));
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnGripState == 1)
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 0);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error opening HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Open;");
          }
        }
        else
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 1);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Close;");
          }
        }
      }
    }
  }

  function TRP_SWP_CORE( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable i_blnEjectTool ) void {
    private variable intEjectTool;
    private variable loopCounter1;
    private variable intNumberOfTransports;
    private variable blnEjectTool;
    private variable fltGripHeight;
    private variable fltGripWidthOpen;
    private variable fltGripWidth;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_SWP_CORE"));
    blnEjectTool = i_blnEjectTool;
    fltGripWidth = 79.5;
    fltGripHeight = 12;
    fltGripWidthOpen = 85;
    if(0){
      intNumberOfTransports = SeqGetTotal(i_seqSource);
    }
    HHS_Lock(1);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if(0){
      {
        loopCounter1 = 0;
        while (
           (i_seqSource.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqSource, 1);
          loopCounter1 = loopCounter1 + 1;
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          if (loopCounter1 == intNumberOfTransports)
          {
            intEjectTool = 1;
          }
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          if (
             (i_seqSource.GetCurrentPosition() > 0 && i_seqSource.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqSource.SetMax(i_seqSource.GetTotal());
        i_seqSource.SetCurrentPosition(1);
      }
    }
    HHS_Lock(0);
  }

  function PIP_96H_DWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable blnTipEject ) void {
    private dialog customDialog_4;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private dialog customDialog_7;
    private variable intTipType;
    private variable rtnLookup;
    private variable intTotalPositions;
    private variable loopCounter2;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private dialog customDialog_8;
    private variable intMixCycleMax;
    private dialog customDialog_9;
    private dialog customDialog_10;
    private dialog customDialog_11;
    private dialog customDialog_12;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== blnTipEject = "), blnTipEject);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    intMixCycleMax = 99;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_11.InitCustomDialog("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");
      customDialog_11.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_11.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_11.ShowCustomDialog();
      rtnValue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_11.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_12.InitCustomDialog("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");
        customDialog_12.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_12.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_12.ShowCustomDialog();
        rtnValue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_12.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles < intMixCycleMax)
      {
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_8.InitCustomDialog("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");
          customDialog_8.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_8.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_8.ShowCustomDialog();
          rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_8.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_9.InitCustomDialog("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");
        customDialog_9.SetCustomDialogProperty( "numeric1.Maximum", intMixCycleMax );
        customDialog_9.ShowCustomDialog();
        rtnValue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_9.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      if(0){
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_10.InitCustomDialog("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");
          customDialog_10.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_10.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_10.ShowCustomDialog();
          rtnValue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_10.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(i_seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
      rtnValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
    intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (intTipType != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
      rtnValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqTips_NTR300);
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (blnTipEject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
    }
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqTips_NTR300);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToDWP"));
  }

  function DATA_SequenceIncrement( variable blnIsTwoPlate, sequence & io_seqToIncrement ) void {
    private variable intTotalPositions;
    private variable intExpectedPositions;
    private variable intCurrentPosition;
    private variable strSeqName;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
    intExpectedPositions = 192;
    intTotalPositions = SeqGetTotal(io_seqToIncrement);
    if (intTotalPositions == intExpectedPositions)
    {
      intCurrentPosition = io_seqToIncrement.GetCurrentPosition();
      if (intCurrentPosition == 1)
      {
        io_seqToIncrement.SetCurrentPosition(97);
      }
      if (intCurrentPosition == 97)
      {
        SeqResetSequenceIndexes(io_seqToIncrement);
      }
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqToIncrement);
    }
    else
    {
      strSeqName = SeqGetName(io_seqToIncrement);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("===== The following sequence: '"), strSeqName, Translate("' does not require incrementation. "), Translate("\n The sequence has not been altered by the sub-method."));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("DATA_SequenceIncrement"));
  }

  function PIP_96H_SWPToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixVolume, variable fltAspMixHeight, variable fltDispHeight, variable intDispMixCycles, variable fltDispMixVolume, variable fltDispMixHeight, variable blnDispMixFollow ) void {
    private dialog customDialog_13;
    private dialog customDialog_14;
    private dialog customDialog_15;
    private dialog customDialog_16;
    private dialog customDialog_17;
    private dialog customDialog_18;
    private dialog customDialog_19;
    private dialog customDialog_20;
    private dialog customDialog_21;
    private variable intMixCycleMax;
    private variable intTipType;
    private variable rtnLookup;
    private variable intTotalPositions;
    private variable loopCounter2;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private dialog customDialog_22;
    private dialog customDialog_23;
    private dialog customDialog_24;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_SWPToDWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispMixVolume = "), fltDispMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== intDispMixCycles = "), intDispMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispMixHeight = "), fltDispMixHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    intMixCycleMax = 99;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_21.InitCustomDialog("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");
      customDialog_21.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_21.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_21.ShowCustomDialog();
      rtnValue = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_21.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_16.InitCustomDialog("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");
        customDialog_16.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_16.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_16.ShowCustomDialog();
        rtnValue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_16.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles < intMixCycleMax)
      {
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_14.InitCustomDialog("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");
          customDialog_14.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_14.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_14.ShowCustomDialog();
          rtnValue = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_14.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_19.InitCustomDialog("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");
        customDialog_19.SetCustomDialogProperty( "numeric1.Maximum", intMixCycleMax );
        customDialog_19.ShowCustomDialog();
        rtnValue = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_19.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      if(0){
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_17.InitCustomDialog("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");
          customDialog_17.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_17.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_17.ShowCustomDialog();
          rtnValue = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_17.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
    }
    if (intDispMixCycles > 0)
    {
      if (intDispMixCycles < intMixCycleMax)
      {
        if (fltDispMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_24.InitCustomDialog("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");
          customDialog_24.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_24.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_24.ShowCustomDialog();
          rtnValue = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_24.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltDispMixVolume = "), fltDispMixVolume);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_23.InitCustomDialog("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");
        customDialog_23.SetCustomDialogProperty( "numeric1.Maximum", intMixCycleMax );
        customDialog_23.ShowCustomDialog();
        rtnValue = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_23.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intDispMixCycles = "), intDispMixCycles);
        }
      }
      if(0){
        if (fltAspMixVolume > fltVolumeMax)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
          customDialog_22.InitCustomDialog("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");
          customDialog_22.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_22.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_22.ShowCustomDialog();
          rtnValue = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_22.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(i_seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_15.InitCustomDialog("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");
      customDialog_15.ShowCustomDialog();
      rtnValue = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_20.InitCustomDialog("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");
      customDialog_20.ShowCustomDialog();
      rtnValue = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_18.InitCustomDialog("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");
      customDialog_18.ShowCustomDialog();
      rtnValue = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
    intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (intTipType != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_13.InitCustomDialog("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");
      customDialog_13.ShowCustomDialog();
      rtnValue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        if(0){
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        }
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_SWPToDWP"));
  }

  function TRP_DWP_CORE( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable i_blnEjectTool ) void {
    private variable fltGripHeight;
    private variable blnEjectTool;
    private variable fltGripWidthOpen;
    private variable fltGripWidth;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_DWP_CORE"));
    blnEjectTool = i_blnEjectTool;
    fltGripWidth = 79.5;
    fltGripHeight = 12;
    fltGripWidthOpen = 85;
    HHS_Lock(1);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_Lock(0);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("TRP_DWP_CORE"));
  }

  function PIP_96H_ResToDWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable fltDispHeight ) void {
    private dialog customDialog_25;
    private dialog customDialog_26;
    private dialog customDialog_27;
    private dialog customDialog_28;
    private dialog customDialog_29;
    private variable intMixCycleMax;
    private variable intTipType;
    private variable intTotalPositions;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private variable strLiquidClass;
    private variable strOutput;
    private variable strLabwareType;
    private variable intLabwareType;
    private dialog customDialog_30;
    private dialog customDialog_31;
    private variable strLiquidType;
    private variable intLiquidType;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_ResToDWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_FastDispenseSwap_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_SlowDispense"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"));
    strOutput = SeqGetName(i_seqSource);
    intLabwareType = StrFind(strOutput, Translate("Res"));
    if (intLabwareType >= 0)
    {
      strLabwareType = Translate("Reservoir");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Labware type for i_seqSource = "), strLabwareType);
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Labware type check failed."), Translate(""));
      customDialog_30.InitCustomDialog("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");
      customDialog_30.ShowCustomDialog();
      rtnValue = customDialog_30.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    strOutput = SeqGetName(i_seqSource);
    intLiquidType = StrFind(strOutput, Translate("Ethanol"));
    if (intLiquidType >= 0)
    {
      strLiquidType = Translate("Ethanol");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid type for i_seqSource = "), strLiquidType);
    }
    else
    {
      intLiquidType = StrFind(strOutput, Translate("Elution"));
      if (intLiquidType >= 0)
      {
        strLiquidType = Translate("Elution");
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid type for i_seqSource = "), strLiquidType);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid type check failed."), Translate(""));
        customDialog_31.InitCustomDialog("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");
        customDialog_31.ShowCustomDialog();
        rtnValue = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    fltVolumeMax = 250;
    fltVolumeMin = 5;
    intMixCycleMax = 99;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_27.InitCustomDialog("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");
      customDialog_27.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_27.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_27.ShowCustomDialog();
      rtnValue = customDialog_27.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_27.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_26.InitCustomDialog("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");
        customDialog_26.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_26.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_26.ShowCustomDialog();
        rtnValue = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_26.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(i_seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_28.InitCustomDialog("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");
      customDialog_28.ShowCustomDialog();
      rtnValue = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_29.InitCustomDialog("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");
      customDialog_29.ShowCustomDialog();
      rtnValue = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    if(0){
      MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
      MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
      intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
      if (intTipType != 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
        customDialog_25.InitCustomDialog("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");
        customDialog_25.ShowCustomDialog();
        rtnValue = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    if (strLiquidType == "Ethanol")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pre-wetting tips with ethanol."), Translate(""));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
    }
    if (strLiquidType == "Elution")
    {
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
    }
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, seqTips_NTR300);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_ResToDWP"));
  }

  function PIP_96H_DWPToSWP( device & ML_STAR, sequence i_seqSource, sequence i_seqDestination, variable fltVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void {
    private dialog customDialog_32;
    private dialog customDialog_33;
    private dialog customDialog_34;
    private dialog customDialog_35;
    private dialog customDialog_36;
    private dialog customDialog_37;
    private variable intTipType;
    private variable rtnLookup;
    private variable intTotalPositions;
    private variable loopCounter2;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToSWP"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltVolume = "), fltVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== fltDispHeight = "), fltDispHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    if (fltVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
      customDialog_33.InitCustomDialog("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");
      customDialog_33.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_33.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_33.ShowCustomDialog();
      rtnValue = customDialog_33.GetCustomDialogProperty( "ReturnValue" );
      fltVolume = customDialog_33.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
      }
    }
    else
    {
      if (fltVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Volume check failed."), Translate(""));
        customDialog_36.InitCustomDialog("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");
        customDialog_36.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_36.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_36.ShowCustomDialog();
        rtnValue = customDialog_36.GetCustomDialogProperty( "ReturnValue" );
        fltVolume = customDialog_36.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltVolume = "), fltVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    intTotalPositions = SeqGetTotal(i_seqSource);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqSource = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_35.InitCustomDialog("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");
      customDialog_35.ShowCustomDialog();
      rtnValue = customDialog_35.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    intTotalPositions = SeqGetTotal(i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Total positions in i_seqDestination = "), intTotalPositions);
    intTotalPositions = intTotalPositions % 96;
    if (intTotalPositions != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Sequence positions check failed."), Translate(""));
      customDialog_34.InitCustomDialog("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");
      customDialog_34.ShowCustomDialog();
      rtnValue = customDialog_34.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Seqeunces successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_37.InitCustomDialog("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");
      customDialog_37.ShowCustomDialog();
      rtnValue = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(strLiquidClass);
    intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (intTipType != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
      customDialog_32.InitCustomDialog("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");
      customDialog_32.ShowCustomDialog();
      rtnValue = customDialog_32.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_96H_DWPToSWP"));
  }

  function PIP_BeadAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltBeadVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable intMixCycles, variable fltMixHeight, variable fltMixVolume, variable blnTipEject ) void {
    private dialog customDialog_38;
    private dialog customDialog_39;
    private dialog customDialog_40;
    private variable rtnLookup;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    private dialog customDialog_41;
    private dialog customDialog_42;
    private dialog customDialog_43;
    private variable fltMixCyclesMax;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_BeadAddition"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltBeadVolume  = "), fltBeadVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intMixCycles = "), intMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltMixHeight = "), fltMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltMixVolume = "), fltMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== blnTipEject = "), blnTipEject);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    fltMixCyclesMax = 99;
    if (fltBeadVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_40.InitCustomDialog("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");
      customDialog_40.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_40.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_40.ShowCustomDialog();
      rtnValue = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
      fltBeadVolume = customDialog_40.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltBeadVolume = "), fltBeadVolume);
      }
    }
    else
    {
      if (fltBeadVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_39.InitCustomDialog("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");
        customDialog_39.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_39.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_39.ShowCustomDialog();
        rtnValue = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
        fltBeadVolume = customDialog_39.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltBeadVolume = "), fltBeadVolume);
        }
      }
    }
    if (intMixCycles > 0)
    {
      if (intMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_41.InitCustomDialog("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");
        customDialog_41.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_41.ShowCustomDialog();
        rtnValue = customDialog_41.GetCustomDialogProperty( "ReturnValue" );
        intMixCycles = customDialog_41.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intMixCycles = "), intMixCycles);
        }
      }
      else
      {
        if (fltMixVolume < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_42.InitCustomDialog("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");
          customDialog_42.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_42.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_42.ShowCustomDialog();
          rtnValue = customDialog_42.GetCustomDialogProperty( "ReturnValue" );
          fltMixVolume = customDialog_42.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltMixVolume = "), fltMixVolume);
          }
        }
        else
        {
          if (fltMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_43.InitCustomDialog("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");
            customDialog_43.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_43.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_43.ShowCustomDialog();
            rtnValue = customDialog_43.GetCustomDialogProperty( "ReturnValue" );
            fltMixVolume = customDialog_43.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltMixVolume = "), fltMixVolume);
            }
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_38.InitCustomDialog("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");
      customDialog_38.ShowCustomDialog();
      rtnValue = customDialog_38.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    if (blnTipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_BeadAddition"));
  }

  function PIP_ElutionAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltElutionVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight, variable intMixCycles, variable fltMixVolume, variable fltMixHeight, variable blnTipEject ) void {
    private dialog customDialog_44;
    private dialog customDialog_45;
    private dialog customDialog_46;
    private dialog customDialog_47;
    private dialog customDialog_48;
    private dialog customDialog_49;
    private variable fltMixCyclesMax;
    private variable rtnLookup;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_ElutionAddition"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltElutionVolume = "), fltElutionVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intMixCycles = "), intMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltMixVolume = "), fltMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltMixHeight = "), fltMixHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    fltMixCyclesMax = 99;
    if (fltElutionVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_45.InitCustomDialog("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");
      customDialog_45.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_45.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_45.ShowCustomDialog();
      rtnValue = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
      fltElutionVolume = customDialog_45.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltElutionVolume = "), fltElutionVolume);
      }
    }
    else
    {
      if (fltElutionVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_48.InitCustomDialog("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");
        customDialog_48.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_48.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_48.ShowCustomDialog();
        rtnValue = customDialog_48.GetCustomDialogProperty( "ReturnValue" );
        fltElutionVolume = customDialog_48.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltElutionVolume = "), fltElutionVolume);
        }
      }
    }
    if (intMixCycles > 0)
    {
      if (intMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_47.InitCustomDialog("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");
        customDialog_47.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_47.ShowCustomDialog();
        rtnValue = customDialog_47.GetCustomDialogProperty( "ReturnValue" );
        intMixCycles = customDialog_47.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intMixCycles= "), intMixCycles);
        }
      }
      else
      {
        if (fltMixVolume < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_49.InitCustomDialog("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");
          customDialog_49.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_49.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_49.ShowCustomDialog();
          rtnValue = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
          fltMixVolume = customDialog_49.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltMixVolume = "), fltMixVolume);
          }
        }
        else
        {
          if (fltMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_44.InitCustomDialog("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");
            customDialog_44.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_44.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_44.ShowCustomDialog();
            rtnValue = customDialog_44.GetCustomDialogProperty( "ReturnValue" );
            fltMixVolume = customDialog_44.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltMixVolume = "), fltMixVolume);
            }
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_46.InitCustomDialog("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");
      customDialog_46.ShowCustomDialog();
      rtnValue = customDialog_46.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    if (blnTipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_ElutionAddition"));
  }

  function PIP_ElutionTransfer( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltElutionVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void {
    private dialog customDialog_50;
    private dialog customDialog_51;
    private dialog customDialog_52;
    private variable rtnLookup;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_ElutionTransfer"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltElutionVolume = "), fltElutionVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    if (fltElutionVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_50.InitCustomDialog("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");
      customDialog_50.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_50.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_50.ShowCustomDialog();
      rtnValue = customDialog_50.GetCustomDialogProperty( "ReturnValue" );
      fltElutionVolume = customDialog_50.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltElutionVolume = "), fltElutionVolume);
      }
    }
    else
    {
      if (fltElutionVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_51.InitCustomDialog("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");
        customDialog_51.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_51.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_51.ShowCustomDialog();
        rtnValue = customDialog_51.GetCustomDialogProperty( "ReturnValue" );
        fltElutionVolume = customDialog_51.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltElutionVolume = "), fltElutionVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_52.InitCustomDialog("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");
      customDialog_52.ShowCustomDialog();
      rtnValue = customDialog_52.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_ElutionTransfer"));
  }

  function PIP_EthanolWashes( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, sequence & i_seqWaste, variable fltWashVolume, variable strEthanolAspLiquidClass, variable fltEthanolAspHeight, variable strWashDispLiquidClass, variable fltWashDispHeight, variable fltWasteAspHeight, variable strWasteLiquidClass, variable fltWasteDispHeight, variable fltFinalWasteRemovalVolume, variable fltFinalWasteDispHeight ) void {
    private dialog customDialog_53;
    private dialog customDialog_54;
    private dialog customDialog_55;
    private dialog customDialog_56;
    private dialog customDialog_57;
    private variable rtnTimerStopped;
    private variable rtnLookup;
    private variable loopCounter1;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private timer EthanolWash;
    private variable arrApprovedLQC[];
    private dialog customDialog_58;
    private dialog customDialog_59;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_EthanolWashes"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqWaste);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltWashVolume = "), fltWashVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strEthanolAspLiquidClass = "), strEthanolAspLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltEthanolAspHeight = "), fltEthanolAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strWashDispLiquidClass = "), strWashDispLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltWashDispHeight = "), fltWashDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltWasteAspHeight = "), fltWasteAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strWasteLiquidClass = "), strWasteLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======fltWasteDispHeight = "), fltWasteDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltFinalWasteRemovalVolume = "), fltFinalWasteRemovalVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======fltFinalWasteDispHeight = "), fltFinalWasteDispHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_FastDispenseSwap_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_EtOH_SlowDispense"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    if (fltWashVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_53.InitCustomDialog("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");
      customDialog_53.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_53.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_53.ShowCustomDialog();
      rtnValue = customDialog_53.GetCustomDialogProperty( "ReturnValue" );
      fltWashVolume = customDialog_53.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltWashVolume = "), fltWashVolume);
      }
    }
    else
    {
      if (fltWashVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_55.InitCustomDialog("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");
        customDialog_55.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_55.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_55.ShowCustomDialog();
        rtnValue = customDialog_55.GetCustomDialogProperty( "ReturnValue" );
        fltWashVolume = customDialog_55.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltWashVolume = "), fltWashVolume);
        }
      }
    }
    if (fltFinalWasteRemovalVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_54.InitCustomDialog("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");
      customDialog_54.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_54.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_54.ShowCustomDialog();
      rtnValue = customDialog_54.GetCustomDialogProperty( "ReturnValue" );
      fltFinalWasteRemovalVolume = customDialog_54.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltFinalWasteRemovalVolume = "), fltFinalWasteRemovalVolume);
      }
    }
    else
    {
      if (fltFinalWasteRemovalVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_57.InitCustomDialog("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");
        customDialog_57.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_57.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_57.ShowCustomDialog();
        rtnValue = customDialog_57.GetCustomDialogProperty( "ReturnValue" );
        fltFinalWasteRemovalVolume = customDialog_57.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltFinalWasteRemovalVolume = "), fltFinalWasteRemovalVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strEthanolAspLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_56.InitCustomDialog("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");
      customDialog_56.ShowCustomDialog();
      rtnValue = customDialog_56.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strWashDispLiquidClass);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
      if (rtnLookup == 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
        customDialog_58.InitCustomDialog("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");
        customDialog_58.ShowCustomDialog();
        rtnValue = customDialog_58.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      else
      {
        rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strWasteLiquidClass);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
        if (rtnLookup == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
          customDialog_59.InitCustomDialog("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");
          customDialog_59.ShowCustomDialog();
          rtnValue = customDialog_59.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if( 0 == EthanolWash.SetTimer(30) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        rtnTimerStopped = EthanolWash.WaitTimer(hslTrue, hslTrue);
        if (0 == rtnTimerStopped)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter1 == 1)
        {
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
        else
        {
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_EthanolWashes"));
  }

  function PIP_SampleAddition( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSampleVolume, variable strLiquidClass, variable fltAspHeight, variable intAspMixCycles, variable fltAspMixHeight, variable fltAspMixVolume, variable fltDispHeight, variable blnDispMixFollow, variable intDispMixCycles, variable fltDispMixHeight, variable fltDispMixVolume ) void {
    private dialog customDialog_60;
    private dialog customDialog_61;
    private dialog customDialog_62;
    private dialog customDialog_63;
    private dialog customDialog_64;
    private dialog customDialog_65;
    private dialog customDialog_66;
    private dialog customDialog_67;
    private dialog customDialog_68;
    private variable fltMixCyclesMax;
    private variable rtnLookup;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SampleAddition"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltSampleVolume = "), fltSampleVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intAspMixCycles = "), intAspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspMixHeight = "), fltAspMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspMixVolume = "), fltAspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== intDispMixCycles = "), intDispMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispMixHeight = "), fltDispMixHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispMixVolume = "), fltDispMixVolume);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    fltMixCyclesMax = 99;
    if (fltSampleVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_62.InitCustomDialog("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");
      customDialog_62.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_62.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_62.ShowCustomDialog();
      rtnValue = customDialog_62.GetCustomDialogProperty( "ReturnValue" );
      fltSampleVolume = customDialog_62.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSampleVolume = "), fltSampleVolume);
      }
    }
    else
    {
      if (fltSampleVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_60.InitCustomDialog("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");
        customDialog_60.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_60.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_60.ShowCustomDialog();
        rtnValue = customDialog_60.GetCustomDialogProperty( "ReturnValue" );
        fltSampleVolume = customDialog_60.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSampleVolume = "), fltSampleVolume);
        }
      }
    }
    if (intAspMixCycles > 0)
    {
      if (intAspMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_63.InitCustomDialog("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");
        customDialog_63.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_63.ShowCustomDialog();
        rtnValue = customDialog_63.GetCustomDialogProperty( "ReturnValue" );
        intAspMixCycles = customDialog_63.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intAspMixCycles = "), intAspMixCycles);
        }
      }
      else
      {
        if (fltAspMixVolume < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_66.InitCustomDialog("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");
          customDialog_66.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_66.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_66.ShowCustomDialog();
          rtnValue = customDialog_66.GetCustomDialogProperty( "ReturnValue" );
          fltAspMixVolume = customDialog_66.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
          }
        }
        else
        {
          if (fltAspMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_67.InitCustomDialog("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");
            customDialog_67.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_67.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_67.ShowCustomDialog();
            rtnValue = customDialog_67.GetCustomDialogProperty( "ReturnValue" );
            fltAspMixVolume = customDialog_67.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltAspMixVolume = "), fltAspMixVolume);
            }
          }
        }
      }
    }
    if (intDispMixCycles > 0)
    {
      if (intDispMixCycles > fltMixCyclesMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Mix cycle count check failed."), Translate(""));
        customDialog_68.InitCustomDialog("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");
        customDialog_68.SetCustomDialogProperty( "numeric1.Maximum", fltMixCyclesMax );
        customDialog_68.ShowCustomDialog();
        rtnValue = customDialog_68.GetCustomDialogProperty( "ReturnValue" );
        intDispMixCycles = customDialog_68.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New mix cycle count selected by the user from the dialog box, intDispMixCycles = "), intDispMixCycles);
        }
      }
      else
      {
        if (intDispMixCycles < fltVolumeMin)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
          customDialog_64.InitCustomDialog("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");
          customDialog_64.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
          customDialog_64.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
          customDialog_64.ShowCustomDialog();
          rtnValue = customDialog_64.GetCustomDialogProperty( "ReturnValue" );
          fltDispMixVolume = customDialog_64.GetCustomDialogProperty( "numeric1.Value" );
          if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltDispMixVolume = "), fltDispMixVolume);
          }
        }
        else
        {
          if (fltDispMixVolume > fltVolumeMax)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
            customDialog_65.InitCustomDialog("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");
            customDialog_65.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
            customDialog_65.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
            customDialog_65.ShowCustomDialog();
            rtnValue = customDialog_65.GetCustomDialogProperty( "ReturnValue" );
            fltDispMixVolume = customDialog_65.GetCustomDialogProperty( "numeric1.Value" );
            if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltDispMixVolume = "), fltDispMixVolume);
            }
          }
        }
      }
    }
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_61.InitCustomDialog("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");
      customDialog_61.ShowCustomDialog();
      rtnValue = customDialog_61.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SampleAddition"));
  }

  function PIP_SupernatantRemoval( device & ML_STAR, sequence & i_seqSource, sequence & i_seqDestination, variable fltSupernatantVolume, variable strLiquidClass, variable fltAspHeight, variable fltDispHeight ) void {
    private dialog customDialog_69;
    private dialog customDialog_70;
    private dialog customDialog_71;
    private variable rtnLookup;
    private variable rtnValue;
    private variable fltVolumeMin;
    private variable fltVolumeMax;
    private variable arrApprovedLQC[];
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SupernatantRemoval"));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqSource);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltSupernatantVolume  = "), fltSupernatantVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== strLiquidClass = "), strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltAspHeight = "), fltAspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== fltDispHeight = "), fltDispHeight);
    arrApprovedLQC.SetSize(0);
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"));
    arrApprovedLQC.AddAsLast(Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"));
    fltVolumeMax = 300;
    fltVolumeMin = 5;
    if (fltSupernatantVolume < fltVolumeMin)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too low, check submethod parameters"), Translate(""));
      customDialog_69.InitCustomDialog("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");
      customDialog_69.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
      customDialog_69.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
      customDialog_69.ShowCustomDialog();
      rtnValue = customDialog_69.GetCustomDialogProperty( "ReturnValue" );
      fltSupernatantVolume = customDialog_69.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSupernatantVolume = "), fltSupernatantVolume);
      }
    }
    else
    {
      if (fltSupernatantVolume > fltVolumeMax)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("====== Variable validation failed - Volume too high, check submethod parameters"), Translate(""));
        customDialog_70.InitCustomDialog("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");
        customDialog_70.SetCustomDialogProperty( "numeric1.Maximum", fltVolumeMax );
        customDialog_70.SetCustomDialogProperty( "numeric1.Minimum", fltVolumeMin );
        customDialog_70.ShowCustomDialog();
        rtnValue = customDialog_70.GetCustomDialogProperty( "ReturnValue" );
        fltSupernatantVolume = customDialog_70.GetCustomDialogProperty( "numeric1.Value" );
        if (rtnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Method aborted by the user. See log files for details."), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== New volume selected by the user from the dialog box, fltSupernatantVolume = "), fltSupernatantVolume);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Pipetting variables successfully validated."), Translate(""));
    rtnLookup = LOOKUP::Lookup(arrApprovedLQC, strLiquidClass);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== ApprovedLQC rtnLookup = "), rtnLookup);
    if (rtnLookup == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed, unapproved liquid class. Please check submethod parameters."), Translate(""));
      customDialog_71.InitCustomDialog("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");
      customDialog_71.ShowCustomDialog();
      rtnValue = customDialog_71.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class successfully validated."), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Setup successful ====="), Translate(""));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanup_Processes"), Translate("strMethodName"), Translate("PIP_SupernatantRemoval"));
  }
} // library namespace
