 namespace _Method { #include "SangerCleanup\\Library\\SangerCleanup_Processes.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.res"
 namespace _Method { #include "NTRDirectUse_WGSPCRXP.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
global device ML_STAR ("SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.lay", "ML_STAR", hslTrue);
variable blnIsTwoPlate;
variable blnSimulationMode;
timer tmrHHS;
variable rtnTimerStopped;
timer tmrBindTwo;
timer tmrBindOne;
timer tmrMagnetOne;
timer tmrDrying;
timer tmrElution;
variable loopCounter1;
variable intPurification;
variable intPurificationLoopCounter;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    SANGERCLEANUP_PROCESSES::_InitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************************************************************************************************************************************************\n                                                            Method Details\n******************************************************************************************************************************************************\nMethod:           Sanger Bead Cleanup Template\nVersion:          0.1 (pre-launch)\nDescription:     A non-production method file consisting of sub-method calls from the 'SangerCleanup_Processes.smt' organised to perform a standard use case cleanup. \n                        This will serve as a template for future active cleanups and elimantes the need to create methods from scratch.\nSoftware:        Venus 4 (v 4.5.0.7977)\nAuthor(s):        Tobi Ajenifuja, Chris Henderson, Kira Nelms\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    SANGERCLEANUP_PROCESSES::SYSTEM_Init(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.NTRTips, ML_STAR.NTREmptyStack, ML_STAR.SourcePlates, ML_STAR.BindPlates, ML_STAR.DestinationPlates, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResBeads, ML_STAR.ResElution, ML_STAR.ResEthanol, ML_STAR.ResWaste, ML_STAR.HHS, blnSimulationMode, blnIsTwoPlate);
    intPurification = 1;
    if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
    {
      intPurification = 2;
    }
    SANGERCLEANUP_PROCESSES::HHS_Heat(38);
    SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0);
    SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindOne, 180);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
    SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
    if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
    {
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.SourcePlates);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0);
      SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindTwo, 180);
    }
    SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrBindOne, rtnTimerStopped);
    SANGERCLEANUP_PROCESSES::HHS_Shake(0);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrMagnetOne, 180);
    if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
    {
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 0);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrHHS, 120);
      SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrHHS, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::HHS_Shake(0);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
    }
    SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrMagnetOne, rtnTimerStopped);
    {
      for(intPurificationLoopCounter = 0; intPurificationLoopCounter < intPurification;)
      {
        intPurificationLoopCounter = intPurificationLoopCounter + 1;
        TrcTrace(Translate("===== Purifying plate number "), intPurificationLoopCounter);
        if (intPurificationLoopCounter == 2)
        {
          SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
          SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
          SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.DestinationPlates);
        }
        SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 100, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 2, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, 180, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 180, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 6.5, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, 180, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 190, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 10, 1);
        SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 0);
        SANGERCLEANUP_PROCESSES::TMR_Start(tmrDrying, 180);
        if (intPurificationLoopCounter == 1)
        {
          NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
        }
        SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrDrying, rtnTimerStopped);
        SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlates, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResElution, ML_STAR.BindPlates, 52, 1);
        SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.5, 10, 40, 0, 1, 0);
        SANGERCLEANUP_PROCESSES::TMR_Start(tmrElution, 180);
        SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 0);
        SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
        SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrElution, rtnTimerStopped);
        SANGERCLEANUP_PROCESSES::HHS_Shake(0);
        SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
        SANGERCLEANUP_PROCESSES::TMR_Start(tmrMagnetOne, 120);
        SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrMagnetOne, rtnTimerStopped);
        SANGERCLEANUP_PROCESSES::PIP_96H_DWPToSWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.DestinationPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty"), 0.2, 1);
      }
    }
    SANGERCLEANUP_PROCESSES::HHS_Heat(0);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
    if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
    {
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
      SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
    }
    NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
    SANGERCLEANUP_PROCESSES::_ExitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_ExitLibrary();
  } }
