#include "SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.res"
global device ML_STAR ("SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "..\\HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "MLSTARLiquidClassLib.hsl" }
 namespace _Method { #include "CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "NTRDirectUse_WGSPCRXP.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
dialog customDialog_1;
variable blnSimulationMode;
variable retValueDialog;
dialog customDialog_2;
variable HHS1;
variable t_intPlateNumber;
timer tmrBindOne;
variable rtnTimerStopped;
variable intPurificationLoopCounter;
variable WashLoopCounter;
timer tmrWash;
timer tmrBindTwo;
timer tmrElution;
timer tmrMagOne;
timer tmrDrying;
timer tmrMagTwo;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (blnSimulationMode == 1)
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == 2)
      {
        abort;
      }
    }
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    t_intPlateNumber = 0;
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    t_intPlateNumber = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
    if (retValueDialog == 2)
    {
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======== t_intPlateNumber = "), t_intPlateNumber);
    I_LoadInstructions(90, 100, 50, 480);
    HSLHamHeaterShaker::StartTempCtrl(HHS1, 45, 0);
    MECC::TraceComment(Translate("====== Pipetting Start ======="));
    A_BeadAddition(ML_STAR.ResBeads, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 1, 0, 0, 0, 0);
    B_SampleAddition(ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 5, 40, 0.2, 1, 30, 80, 0.5);
    if( 0 == tmrBindOne.SetTimer(180) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    J_LabwareTransportNoCheck(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
    HSLHamHeaterShaker::StartShakerTimed(HHS1, 1000, 120);
    if (t_intPlateNumber == 2)
    {
      ML_STAR.SourcePlates.SetCurrentPosition(97);
      ML_STAR.BindPlates.SetCurrentPosition(97);
      A_BeadAddition(ML_STAR.ResBeads, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 1, 0, 0, 0, 0);
      B_SampleAddition(ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 5, 40, 0.2, 1, 30, 80, 0.5);
      if( 0 == tmrBindTwo.SetTimer(180) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    rtnTimerStopped = tmrBindOne.WaitTimer(hslTrue, hslTrue);
    if (0 == rtnTimerStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    J_LabwareTransportNoCheck(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
    if( 0 == tmrMagOne.SetTimer(180) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (t_intPlateNumber == 2)
    {
      J_LabwareTransportNoCheck(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
      HSLHamHeaterShaker::StartShakerTimed(HHS1, 1000, 120);
      ML_STAR.BindPlatesOnMagnet.SetCurrentPosition(97);
      rtnTimerStopped = tmrBindTwo.WaitTimer(hslTrue, hslTrue);
      if (0 == rtnTimerStopped)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      J_LabwareTransportNoCheck(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
      if( 0 == tmrMagTwo.SetTimer(180) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      ML_STAR.BindPlatesOnMagnet.SetCurrentPosition(1);
      ML_STAR.BindPlates.SetCurrentPosition(1);
    }
    {
      for(intPurificationLoopCounter = 0; intPurificationLoopCounter < t_intPlateNumber;)
      {
        intPurificationLoopCounter = intPurificationLoopCounter + 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Plate purification loop = "), intPurificationLoopCounter);
        if (intPurificationLoopCounter == 2)
        {
          ML_STAR.BindPlatesOnMagnet.SetCurrentPosition(97);
          ML_STAR.BindPlates.SetCurrentPosition(97);
          ML_STAR.DestinationPlates.SetCurrentPosition(97);
        }
        C_SupernatantTransfer(ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 100, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 3);
        {
          for(WashLoopCounter = 0; WashLoopCounter < 2;)
          {
            WashLoopCounter = WashLoopCounter + 1;
            D_EthanolAddition(ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, 180, Translate("DNAP_Tip_300ul_96COREHead_EtOH_DispenseSurface_Empty"), 1, 1, Translate("DNAP_Tip_300ul_96COREHead_EtOH_SlowDispense"), 1, 0);
            if( 0 == tmrWash.SetTimer(30) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            rtnTimerStopped = tmrWash.WaitTimer(hslTrue, hslTrue);
            if (0 == rtnTimerStopped)
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (WashLoopCounter == 1)
            {
              E_EthanolRemoval(ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 180, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 6.5, 1);
            }
          }
        }
        E_EthanolRemoval(ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 190, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 6.5, 1);
        if( 0 == tmrDrying.SetTimer(180) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        J_LabwareTransportNoCheck(ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 2, 1);
        HSLHamHeaterShaker::StartShakerTimed(HHS1, 1000, 120);
        NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
        rtnTimerStopped = tmrDrying.WaitTimer(hslTrue, hslTrue);
        if (0 == rtnTimerStopped)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        J_LabwareTransportNoCheck(ML_STAR.HHS, ML_STAR.BindPlates, 2, 1);
        F_ElutionAddition(ML_STAR.ResElution, ML_STAR.BindPlates, 52, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 1, 1, 0, 0, 0, 1, 0);
        F_ElutionAddition(ML_STAR.BindPlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.2, 0.5, 10, 40, 0.5, 1, 0);
        if( 0 == tmrElution.SetTimer(180) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        J_LabwareTransportNoCheck(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
        HSLHamHeaterShaker::StartShakerTimed(HHS1, 1000, 120);
        rtnTimerStopped = tmrElution.WaitTimer(hslTrue, hslTrue);
        if (0 == rtnTimerStopped)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        J_LabwareTransportNoCheck(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
        G_ElutionTransfer(ML_STAR.BindPlatesOnMagnet, ML_STAR.DestinationPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty"), 0.2, 1);
        if (intPurificationLoopCounter == 2)
        {
          ML_STAR.BindPlates.SetCurrentPosition(1);
          ML_STAR.BindPlatesOnMagnet.SetCurrentPosition(1);
        }
      }
    }
    MECC::TraceComment(Translate("====== Pipetting Completed ======="));
    MECC::TraceComment(Translate("Turn off heater shaker"));
    HSLHamHeaterShaker::StopTempCtrl(HHS1);
    J_LabwareTransportNoCheck(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
    if (t_intPlateNumber == 2)
    {
      ML_STAR.BindPlates.SetCurrentPosition(97);
      ML_STAR.BindPlatesOnMagnet.SetCurrentPosition(97);
      J_LabwareTransportNoCheck(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
    }
    NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, Translate("The program is now complete. Please remove and seal your cleaned-up plate(s)"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.NTREmptyStack, Translate("Remove all empty NTR racks and clean down the deck"));
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_ExitLibrary();
  } }
