#include "SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.res"
global device ML_STAR ("SangerCleanup\\Deck Layouts\\Sanger_BeadCleanup_General_STAR_Template.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "MLSTARLiquidClassLib.hsl" }
 namespace _Method { #include "CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "NTRDirectUse_WGSPCRXP.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
variable blnSimulationMode;
variable retValueDialog;
variable HHS1;
timer tmrDrying;
dialog customDialog_1;
variable intPlateNumber;
dialog customDialog_2;
variable u_intMaxPlateNumber;
variable u_intEtOHVolume_Loading;
variable u_intEBVolume_Loading;
variable u_intBeadVolume_Loading;
variable u_intTipsRequired;
variable _strTipCounter;
variable u_strMagnetType;
dialog customDialog_3;
variable rtnValue;
variable u_strWorkflowName;
dialog customDialog_4;
variable u_strTipCounter;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    u_intMaxPlateNumber = 2;
    u_intBeadVolume_Loading = 50;
    u_intEBVolume_Loading = 50;
    u_intEtOHVolume_Loading = 50;
    u_intTipsRequired = 480;
    u_strMagnetType = Translate("Alpaqua FLX");
    u_strTipCounter = Translate("NTR_300_96MPH");
    u_strWorkflowName = Translate("Temp");
    u_strWorkflowName = u_strWorkflowName + Translate(" Bead Cleanup");
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Simulation Mode: "), blnSimulationMode);
    if (blnSimulationMode == 1)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
      customDialog_4.ShowCustomDialog();
      retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == 2)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
        abort;
      }
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    intPlateNumber = A_UserInput();
    if (blnSimulationMode == 0)
    {
      B_LoadInstructions();
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
    customDialog_3.ShowCustomDialog();
    rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (retValueDialog == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
      abort;
    }
    C_PipettingSteps();
    D_MethodComplete();
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_ExitLibrary();
  } }
