private function A_BeadAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight, variable i_blnTipEject ) void ;
private function B_SampleAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_intAspMixCycles, variable i_fltAspMixVolume, variable i_fltAspMixHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight ) void ;
private function C_SupernatantTransfer( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
private function D_EthanolAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strAspLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strDispLiquidClass, variable i_blnPreWet, variable i_blnTipEject ) void ;
private function E_EthanolRemoval( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnTipEject ) void ;
private function F_ElutionAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight, variable i_blnPreWet, variable i_blnTipEject ) void ;
private function G_ElutionTransfer( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
private function H_DiluentAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight ) void ;
private function I_LoadInstructions( variable i_intBeadLoadVolume, variable i_intEthanolLoadVolume, variable i_intEBLoadVolume, variable i_intTipsRequired ) void ;
private function J_LabwareTransportNoCheck( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip, variable i_blnIncrementDestSeq ) void ;
private function _ParameterCheckLiquidClasses( variable i_strLiquidClass ) void ;
private function _ParameterCheckMixCycles( variable i_intMixCycles ) void ;
private function _ParameterCheckVolumes( variable i_fltVolume, variable i_intVolumeMax, variable i_intVolumeMin, variable i_blnMixVolume ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function _VersionHistory(  ) void {
}

private function A_BeadAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight, variable i_blnTipEject ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("A_BeadAddition"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_intDispMixCycles = "), i_intDispMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixVolume = "), i_fltDispMixVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixHeight = "), i_fltDispMixHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnTipEject = "), i_blnTipEject);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckVolumes(i_fltDispMixVolume, 300, 5, 1);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  _ParameterCheckMixCycles(i_intDispMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if (i_blnTipEject == 1)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("A_BeadAddition"));
}

private function B_SampleAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_intAspMixCycles, variable i_fltAspMixVolume, variable i_fltAspMixHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("B_SampleAddition"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_intAspMixCycles = "), i_intAspMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspMixVolume = "), i_fltAspMixVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspMixHeight = "), i_fltAspMixHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_intDispMixCycles = "), i_intDispMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixVolume = "), i_fltDispMixVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixHeight = "), i_fltDispMixHeight);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckVolumes(i_fltAspMixVolume, 300, 5, 1);
  _ParameterCheckVolumes(i_fltDispMixVolume, 300, 5, 1);
  _ParameterCheckMixCycles(i_intAspMixCycles);
  _ParameterCheckMixCycles(i_intDispMixCycles);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("B_SampleAddition"));
}

private function C_SupernatantTransfer( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("C_SupernatantTransfer"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("C_SupernatantTransfer"));
}

private function D_EthanolAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strAspLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strDispLiquidClass, variable i_blnPreWet, variable i_blnTipEject ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("D_EthanolAddition"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strAspLiquidClass = "), i_strAspLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strDispLiquidClass = "), i_strDispLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnPreWet = "), i_blnPreWet);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnTipEject = "), i_blnTipEject);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckLiquidClasses(i_strAspLiquidClass);
  _ParameterCheckLiquidClasses(i_strDispLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  if (i_blnPreWet == 1)
  {
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
  }
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if (i_blnTipEject == 1)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("D_EthanolAddition"));
}

private function E_EthanolRemoval( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnTipEject ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("E_EthanolRemoval"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnTipEject = "), i_blnTipEject);
  _ParameterCheckVolumes(i_fltVolume, 300, 50, 0);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if (i_blnTipEject == 1)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("E_EthanolRemoval"));
}

private function F_ElutionAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight, variable i_blnPreWet, variable i_blnTipEject ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("F_ElutionAddition"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_intDispMixCycles = "), i_intDispMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixVolume = "), i_fltDispMixVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixHeight = "), i_fltDispMixHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnPreWet = "), i_blnPreWet);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_blnTipEject = "), i_blnTipEject);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckVolumes(i_fltDispMixVolume, 300, 5, 1);
  _ParameterCheckMixCycles(i_intDispMixCycles);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  if (i_blnPreWet == 1)
  {
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
  }
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if (i_blnTipEject == 1)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("F_ElutionAddition"));
}

private function G_ElutionTransfer( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("G_ElutionTransfer"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("G_ElutionTransfer"));
}

private function _ParameterCheckMixCycles( variable i_intMixCycles ) void {
  private dialog customDialog_1;
  private variable i_intMixCyclesMax;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckMixCycles"));
  i_intMixCyclesMax = 99;
  if (i_intMixCycles > i_intMixCyclesMax)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Mix cycle count check failed."), Translate(""));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    abort;
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckMixCycles"));
}

private function H_DiluentAddition( sequence & io_seqSource, sequence & io_seqDestination, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intDispMixCycles, variable i_fltDispMixVolume, variable i_fltDispMixHeight ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("H_DiluentAddition"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltVolume = "), i_fltVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_strLiquidClass = "), i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltAspHeight = "), i_fltAspHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispHeight = "), i_fltDispHeight);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_intDispMixCycles = "), i_intDispMixCycles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixVolume = "), i_fltDispMixVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== i_fltDispMixHeight = "), i_fltDispMixHeight);
  _ParameterCheckVolumes(i_fltVolume, 300, 5, 0);
  _ParameterCheckVolumes(i_fltDispMixVolume, 300, 5, 1);
  _ParameterCheckMixCycles(i_intDispMixCycles);
  _ParameterCheckLiquidClasses(i_strLiquidClass);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("H_DiluentAddition"));
}

private function _ParameterCheckLiquidClasses( variable i_strLiquidClass ) void {
  private variable l_intTipType;
  private dialog customDialog_2;
  private dialog customDialog_3;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckLiquidClasses"));
  onerror goto errLabel_4 ;
  err.Clear();
  MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClass);
  errLabel_4 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    abort;
  }   /* end if from skip handler if no error */
  l_intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Tip Type = "), l_intTipType);
  if (l_intTipType != 0)
  {
    MECC::TraceComment(Translate("Liquid class selected incompatible with tips on deck, abort method"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check failed."), Translate(""));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    abort;
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("===== Liquid class check successful."), Translate(""));
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckLiquidClasses"));
}

private function I_LoadInstructions( variable i_intBeadLoadVolume, variable i_intEthanolLoadVolume, variable i_intEBLoadVolume, variable i_intTipsRequired ) void {
  private variable l_strTipCounterNTR;
  private variable l_intTipVolume;
  private variable l_strLoadMessage;
  private variable CarrierArray[];
  private dialog customDialog_5;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("I_LoadInstructions"));
  i_intBeadLoadVolume = i_intBeadLoadVolume * t_intPlateNumber;
  i_intEthanolLoadVolume = i_intEthanolLoadVolume * t_intPlateNumber;
  i_intEBLoadVolume = i_intEBLoadVolume * t_intPlateNumber;
  i_intTipsRequired = i_intTipsRequired * t_intPlateNumber;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_intBeadLoadVolume = "), i_intBeadLoadVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_intEthanolLoadVolume = "), i_intEthanolLoadVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_intEBLoadVolume = "), i_intEBLoadVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_intTipsRequired = "), i_intTipsRequired);
  l_intTipVolume = 300;
  l_strTipCounterNTR = Translate("NTR_300_96MCH");
  l_strLoadMessage = Translate("");
  CarrierArray.SetSize(0);
  CarrierArray.AddAsLast(Translate("MFX_CAR_5NTR4_0001"));
  CarrierArray.AddAsLast(Translate("MFX_CAR_5NTR4_0002"));
  CarrierArray.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
  CarrierArray.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0002"));
  CarrierArray.AddAsLast(Translate("MFX_CAR_4DWP_NestRB_Tube_0001"));
  CarrierArray.AddAsLast(Translate("RGT_CAR_5R60_A00_empty_0001"));
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, CarrierArray);
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, Translate("in positions 1-5 on TIP_CAR_NTR on tracks 1-6"), i_intTipsRequired, l_intTipVolume, 1, l_strTipCounterNTR);
  l_strLoadMessage = StrConcat4(Translate("Please load a plate containing "), i_intBeadLoadVolume, Translate("uL of SPRI select per well in the flashinig position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResBeads, l_strLoadMessage);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResWaste, Translate("Please load an empty waste plate in the flashing location"));
  l_strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), i_intEthanolLoadVolume, Translate("ml of ethanol in the flashing location"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResEthanol, l_strLoadMessage);
  l_strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), i_intEBLoadVolume, Translate("ml of EB in the flashing location"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResElution, l_strLoadMessage);
  if (t_intPlateNumber == 1)
  {
    ML_STAR.SourcePlates.SetCount(96);
    ML_STAR.BindPlates.SetCount(96);
    ML_STAR.DestinationPlates.SetCount(96);
    ML_STAR.BindPlatesOnMagnet.SetCount(96);
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.SourcePlates, Translate("Please load the source PCR plate onto the flashing position"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlates, Translate("Please load the bind plate onto the flashing position"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, Translate("Please load the destination plate onto the flashing position"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlatesOnMagnet, Translate("Please make sure that a magnet is loaded in the flashing position"));
  }
  else
  {
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.SourcePlates, Translate("Please load the source PCR plates onto the flashing position (Left to right)"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlates, Translate("Please load the bind plates onto the flashing position (Left to right)"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, Translate("Please load the destination plates onto the flashing position (Left to right)"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlatesOnMagnet, Translate("Please make sure that 2 magnets are loaded in the flashing position"));
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
  if (retValueDialog == 2)
  {
    abort;
  }
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, CarrierArray);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("I_LoadInstructions"));
}

private function J_LabwareTransportNoCheck( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip, variable i_blnIncrementDestSeq ) void {
  private dialog customDialog_6;
  private variable l_blnError;
  private variable l_intSeqPosition;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("J_LabwareTransportNoCheck"));
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqSource);
  TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, io_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_intLabwareType = "), i_intLabwareType);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= i_blnEjectCoreGrip = "), i_blnEjectCoreGrip);
  l_blnError = 0;
  if (i_intLabwareType > 4)
  {
    l_blnError = 1;
  }
  if (i_intLabwareType < 1)
  {
    l_blnError = 1;
  }
  if (l_blnError == 1)
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Variable Validation And Setup Successful"), Translate(""));
  if (i_intLabwareType == 1)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 2)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 3)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 4)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_blnIncrementDestSeq == 1)
  {
    l_intSeqPosition = SeqIncrement(io_seqDestination, 96);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= l_intSeqPosition = "), l_intSeqPosition);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("J_LabwareTransportNoCheck"));
}

private function _ParameterCheckVolumes( variable i_fltVolume, variable i_intVolumeMax, variable i_intVolumeMin, variable i_blnMixVolume ) void {
  private variable blnVolumeError;
  private dialog customDialog_7;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckVolumes"));
  blnVolumeError = 0;
  if (i_blnMixVolume == 1)
  {
    if (i_fltVolume > 0)
    {
      if (i_fltVolume > i_intVolumeMax)
      {
        blnVolumeError = 1;
      }
      if (i_fltVolume < i_intVolumeMin)
      {
        blnVolumeError = 1;
      }
    }
  }
  else
  {
    if (i_fltVolume > i_intVolumeMax)
    {
      blnVolumeError = 1;
    }
    if (i_fltVolume < i_intVolumeMin)
    {
      blnVolumeError = 1;
    }
  }
  if (blnVolumeError == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("======= Volume validation checks failed"), Translate(""));
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    abort;
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("SangerCleanupTemplateOnly"), Translate("strMethodName"), Translate("_ParameterCheckVolumes"));
}
