private function A_ProcessAgnostic(  ) void ;
private function B_ProcessSpecific(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_ProcessAgnostic(  ) void {
  blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  SANGERCLEANUP_PROCESSES::SYSTEM_Init(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.NTRTips, ML_STAR.NTREmptyStack, ML_STAR.SourcePlates, ML_STAR.BindPlates, ML_STAR.DestinationPlates, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResBeads, ML_STAR.ResElution, ML_STAR.ResEthanol, ML_STAR.ResWaste, ML_STAR.HHS, blnSimulationMode, blnIsTwoPlate);
  intPurification = 1;
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    intPurification = 2;
  }
  SANGERCLEANUP_PROCESSES::HHS_Heat(38);
  SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0);
  SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1);
  SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindOne, 180);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
  SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.SourcePlates);
    SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 55, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 0, 0, 0, 1, 0);
    SANGERCLEANUP_PROCESSES::PIP_96H_SWPToDWP(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty_Slow_Dispense"), 0.2, 0, 0, 0, 1, 30, 80, 0, 1);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindTwo, 180);
  }
  SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrBindOne, rtnTimerStopped);
  SANGERCLEANUP_PROCESSES::HHS_Shake(0);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
  SANGERCLEANUP_PROCESSES::TMR_Start(tmrMagnetOne, 180);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 0);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrHHS, 120);
    SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
    SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrHHS, rtnTimerStopped);
    SANGERCLEANUP_PROCESSES::HHS_Shake(0);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
  }
  SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrMagnetOne, rtnTimerStopped);
  {
    for(intPurificationLoopCounter = 0; intPurificationLoopCounter < intPurification;)
    {
      intPurificationLoopCounter = intPurificationLoopCounter + 1;
      TrcTrace(Translate("===== Purifying plate number "), intPurificationLoopCounter);
      if (intPurificationLoopCounter == 2)
      {
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.DestinationPlates);
      }
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 100, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 2, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, 180, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 180, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 6.5, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, 180, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 190, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0, 0, 0, 10, 1);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 0);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrDrying, 180);
      if (intPurificationLoopCounter == 1)
      {
        NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
      }
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrDrying, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlates, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_ResToDWP(ML_STAR, ML_STAR.ResElution, ML_STAR.BindPlates, 52, 1);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToDWP(ML_STAR, ML_STAR.BindPlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.5, 10, 40, 0, 1, 0);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrElution, 180);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 0);
      SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrElution, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::HHS_Shake(0);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrMagnetOne, 120);
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrMagnetOne, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::PIP_96H_DWPToSWP(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.DestinationPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_Water_DispenseSurface_Empty"), 0.2, 1);
    }
  }
  SANGERCLEANUP_PROCESSES::HHS_Heat(0);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
  }
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
}

private function B_ProcessSpecific(  ) void {
  private timer tmrDryingOne;
  private timer tmrMagOne;
  private timer tmrElutionOne;
  blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  SANGERCLEANUP_PROCESSES::SYSTEM_Init(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.NTRTips, ML_STAR.NTREmptyStack, ML_STAR.SourcePlates, ML_STAR.BindPlates, ML_STAR.DestinationPlates, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResBeads, ML_STAR.ResElution, ML_STAR.ResEthanol, ML_STAR.Waste, ML_STAR.HHS, blnSimulationMode, blnIsTwoPlate);
  intPurification = 1;
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    intPurification = 2;
  }
  SANGERCLEANUP_PROCESSES::HHS_Heat(38);
  SANGERCLEANUP_PROCESSES::PIP_BeadAddition(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 0.5, 0, 0, 0, 0);
  SANGERCLEANUP_PROCESSES::PIP_SampleAddition(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 5, 0.3, 40, 0.2, 1, 30, 0.5, 80);
  SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindOne, 180);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
  SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.SourcePlates);
    SANGERCLEANUP_PROCESSES::PIP_BeadAddition(ML_STAR, ML_STAR.ResBeads, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 0.5, 0, 0, 0, 0);
    SANGERCLEANUP_PROCESSES::PIP_SampleAddition(ML_STAR, ML_STAR.SourcePlates, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 5, 0.3, 40, 0.2, 1, 30, 0.5, 80);
    SANGERCLEANUP_PROCESSES::TMR_Start(tmrBindTwo, 180);
  }
  SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrBindOne, rtnTimerStopped);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
  SANGERCLEANUP_PROCESSES::TMR_Start(tmrMagOne, 180);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
    SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrBindTwo, rtnTimerStopped);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
  }
  {
    for(intPurificationLoopCounter = 0; intPurificationLoopCounter < intPurification;)
    {
      intPurificationLoopCounter = intPurificationLoopCounter + 1;
      TrcTrace(Translate("===== Purifying plate number "), intPurificationLoopCounter);
      if (intPurificationLoopCounter == 2)
      {
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
        SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.DestinationPlates);
      }
      SANGERCLEANUP_PROCESSES::PIP_SupernatantRemoval(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 100, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.2, 0.5);
      SANGERCLEANUP_PROCESSES::PIP_EthanolWashes(ML_STAR, ML_STAR.ResEthanol, ML_STAR.BindPlatesOnMagnet, ML_STAR.ResWaste, 180, Translate("DNAP_Tip_300ul_96COREHead_EtOH_DispenseSurface_Empty"), 0.5, Translate("DNAP_Tip_300ul_96COREHead_EtOH_SlowDispense"), 0.5, 0.2, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.5, 190, 0.8);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrDryingOne, 180);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 1);
      SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrDryingOne, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlates, 1);
      SANGERCLEANUP_PROCESSES::PIP_ElutionAddition(ML_STAR, ML_STAR.ResElution, ML_STAR.BindPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.5, 0.2, 30, 40, 0.4, 0);
      SANGERCLEANUP_PROCESSES::TMR_Start(tmrElutionOne, 180);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlates, ML_STAR.HHS, 1);
      SANGERCLEANUP_PROCESSES::HHS_Shake(1000);
      NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 0, 300);
      SANGERCLEANUP_PROCESSES::TMR_WaitFor(tmrElutionOne, rtnTimerStopped);
      SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 1);
      SANGERCLEANUP_PROCESSES::PIP_ElutionTransfer(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.DestinationPlates, 50, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.2, 0.3);
      MECC::TraceComment(Translate("======= Pipetting Completed ======="));
    }
  }
  SANGERCLEANUP_PROCESSES::HHS_Heat(0);
  SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
  if (blnIsTwoPlate == ASWGLOBAL::BOOL::TRUE)
  {
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlatesOnMagnet);
    SANGERCLEANUP_PROCESSES::DATA_SequenceIncrement(blnIsTwoPlate, ML_STAR.BindPlates);
    SANGERCLEANUP_PROCESSES::TRP_DWP_CORE(ML_STAR, ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 0);
  }
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 0, 300);
}
