private function A_UserInput(  ) variable ;
private function B_LoadInstructions(  ) void ;
private function C_PipettingSteps(  ) void ;
private function D_MethodComplete(  ) void ;
private function _96MPH_PreWet( sequence & i_seq, variable i_strLiquidClass, variable i_fltMix_Height, variable i_blnMix_LiqFollow, variable i_intMix_Cycles, variable i_fltMix_Volume ) void ;
private function _Channels_LabwareTransport( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function B_LoadInstructions(  ) void {
  private variable _strLoadMessage;
  private variable _intSeqPos;
  private variable arrCarriers[];
  private variable _intLoadVolume_Bead;
  private variable _intLoadVolume_EtOH;
  private variable _strMagnetType;
  private variable _intTipsRequired;
  private variable _intLoadVolume_EB;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Load Instructions"), u_strWorkflowName, Translate(""));
  _strMagnetType = u_strMagnetType;
  _intSeqPos = 96 * intPlateNumber;
  _intLoadVolume_Bead = u_intBeadVolume_Loading * intPlateNumber;
  _intLoadVolume_EtOH = u_intEtOHVolume_Loading * intPlateNumber;
  _intLoadVolume_EB = u_intEBVolume_Loading * intPlateNumber;
  _intTipsRequired = u_intTipsRequired * intPlateNumber;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_Bead: "), _intLoadVolume_Bead);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_EtOH: "), _intLoadVolume_EtOH);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_EB: "), _intLoadVolume_EB);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intTipsRequired: "), _intTipsRequired);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strMagnetType: "), _strMagnetType);
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, Translate("in positions 1-5 on TIP_CAR_NTR on tracks 1-6"), _intTipsRequired, 300, 1, u_strTipCounter);
  _strLoadMessage = StrConcat4(Translate("Please load a plate with "), _intLoadVolume_Bead, Translate("uL of SPRI per well on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResBeads, _strLoadMessage);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResWaste, Translate("Please load an empty waste plate on the flashing position"));
  _strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), _intLoadVolume_EtOH, Translate("ml of ethanol on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResEthanol, _strLoadMessage);
  _strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), _intLoadVolume_EB, Translate("ml of EB on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResElution, _strLoadMessage);
  ML_STAR.SourcePlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" source plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.SourcePlates, _strLoadMessage);
  ML_STAR.BindPlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" bind plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlates, _strLoadMessage);
  ML_STAR.DestinationPlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" destination plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, _strLoadMessage);
  ML_STAR.BindPlatesOnMagnet.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat8(Translate("Please load "), intPlateNumber, Translate(" magnet(s) ("), _strMagnetType, Translate(") on to the flashing position(s)"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlatesOnMagnet, _strLoadMessage);
  arrCarriers.SetSize(0);
  arrCarriers.AddAsLast(Translate("MFX_CAR_5NTR4_0001"));
  arrCarriers.AddAsLast(Translate("MFX_CAR_5NTR4_0002"));
  arrCarriers.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
  arrCarriers.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0002"));
  arrCarriers.AddAsLast(Translate("MFX_CAR_4DWP_NestRB_Tube_0001"));
  arrCarriers.AddAsLast(Translate("RGT_CAR_5R60_A00_empty_0001"));
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriers);
}

private function _Channels_LabwareTransport( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip ) void {
  if (i_intLabwareType == 1)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 2)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 3)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_intLabwareType == 4)
  {
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
}

private function A_UserInput(  ) variable {
  private variable o_intPlateNumber;
  private dialog customDialog_1;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("User Input"), u_strWorkflowName, Translate(""));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
  customDialog_1.SetCustomDialogProperty( "numeric1.Maximum", u_intMaxPlateNumber );
  customDialog_1.ShowCustomDialog();
  retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  o_intPlateNumber = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
  if (retValueDialog == 2)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> o_intPlateNumber = "), o_intPlateNumber);
  return (o_intPlateNumber);
}

private function C_PipettingSteps(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  private variable loopCounter5;
  private timer tmrBind;
  private timer tmrPulldown;
  private timer tmrElute;
  private variable intSourcePlatePosition;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Pipetting Steps"), u_strWorkflowName, Translate(""));
  HSLHamHeaterShaker::StartTempCtrl(HHS1, 45, 0);
  NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
  _96MPH_PreWet(ML_STAR.ResBeads, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.5, 1, 50, 40);
  {
    for(loopCounter1 = 0; loopCounter1 < intPlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 1. "), Translate("Transfer Beads"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
    }
  }
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  {
    for(loopCounter2 = 0; loopCounter2 < intPlateNumber;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 != 1)
      {
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 2. "), Translate("Transfer Samples"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 3. "), Translate("Incubate Beads"));
      if(0){
        if( 0 == tmrBind.SetTimer(0) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrBind.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.BindPlatesOnMagnet, 2, 1);
      }
      _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
      if( 0 == tmrBind.SetTimer(0) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrBind.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
      _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 4. "), Translate("Pulldown Beads"));
      if( 0 == tmrPulldown.SetTimer(180) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlatesOnMagnet);
  {
    for(loopCounter3 = 0; loopCounter3 < intPlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 5. "), Translate("Remove Supernatant"));
      NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      {
        for(loopCounter4 = 0; loopCounter4 < 2;)
        {
          loopCounter4 = loopCounter4 + 1;
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
          _96MPH_PreWet(ML_STAR.ResEthanol, Translate("DNAP_Tip_300ul_96COREHead_EtOH_DispenseSurface_Empty"), 1, 0, 1, 180);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 6. "), Translate("Add Ethanol"));
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 7. "), Translate("Remove Ethanol"));
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 8. "), Translate("Dry Beads"));
      if(0){
        _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
        if( 0 == tmrDrying.SetTimer(0) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if( 0 == tmrDrying.SetTimer(0) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
      if(0){
        _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 2, 1);
        HSLHamHeaterShaker::StartShaker(HHS1, 1000);
        if( 0 == tmrDrying.SetTimer(0) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        HSLHamHeaterShaker::StopShaker(HHS1);
        _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlates, 2, 1);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 9. "), Translate("Add EB"));
      NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      _96MPH_PreWet(ML_STAR.ResElution, Translate("DNAP_Tip_300ul_96COREHead_Supernatant_Removal_DispenseSurface_Empty"), 0.5, 0, 5, 25);
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 10. "), Translate("Incubate EB"));
      _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
      if( 0 == tmrElute.SetTimer(0) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrElute.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
      _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
      if(0){
        if( 0 == tmrElute.SetTimer(0) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrElute.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.BindPlatesOnMagnet, 2, 1);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 11. "), Translate("Pulldown Beads"));
      if( 0 == tmrPulldown.SetTimer(180) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.SourcePlates, 96);
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlatesOnMagnet);
  {
    for(loopCounter5 = 0; loopCounter5 < intPlateNumber;)
    {
      loopCounter5 = loopCounter5 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 12. "), Translate("Recover Sample"));
      NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
      SeqIncrement(ML_STAR.SourcePlates, 96);
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlatesOnMagnet);
}

private function D_MethodComplete(  ) void {
  HSLHamHeaterShaker::StopTempCtrl(HHS1);
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, Translate("The program is now complete. Please remove and seal your cleaned-up plate(s)"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.NTREmptyStack, Translate("Remove all empty NTR racks and clean down the deck"));
}

private function _96MPH_PreWet( sequence & i_seq, variable i_strLiquidClass, variable i_fltMix_Height, variable i_blnMix_LiqFollow, variable i_intMix_Cycles, variable i_fltMix_Volume ) void {
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
}
