private function A_UserInput(  ) variable ;
private function B_LoadInstructions(  ) void ;
private function C_PipettingSteps(  ) void ;
private function D_MethodComplete(  ) void ;
private function _Channels_LabwareTransport( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip ) void ;
private function _PreWet_Mix( sequence & i_seq, variable i_fltVolume, variable i_strLiquidClass, variable i_fltMix_Height, variable i_intMix_Cycles, variable i_blnMix_LiqFollow, variable i_blnTipEject ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Method aborted. "), Translate(""));
  SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Aborted"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
  customDialog_1.ShowCustomDialog();
  HSLHamHeaterShaker::StopTempCtrl(HHS1);
  HSLHamHeaterShaker::Terminate();
}

private function B_LoadInstructions(  ) void {
  private variable _strLoadMessage;
  private variable _intSeqPos;
  private variable arrCarriers[];
  private variable _intLoadVolume_Bead;
  private variable _intLoadVolume_EtOH;
  private variable _strMagnetType;
  private variable _intTipsRequired;
  private variable _intLoadVolume_EB;
  private dialog customDialog_2;
  private variable _blnSkipLoading;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Load Instructions"), u_strWorkflowName, Translate(""));
  _blnSkipLoading = 0;
  if (blnSimulationMode == 1)
  {
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
    customDialog_2.ShowCustomDialog();
    retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    _blnSkipLoading = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    if (retValueDialog == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _blnSkipLoading = "), _blnSkipLoading);
  }
  if (_blnSkipLoading != 0)
  {
    return;
  }
  _strMagnetType = u_strMagnetType;
  _intSeqPos = 96 * intPlateNumber;
  _intLoadVolume_Bead = u_intBeadVolume_Loading * intPlateNumber;
  _intLoadVolume_Bead = _intLoadVolume_Bead + u_intNuncDeadVolume_Loading;
  _intLoadVolume_EtOH = u_intEtOHVolume_Loading * intPlateNumber;
  _intLoadVolume_EB = u_intEBVolume_Loading * intPlateNumber;
  _intTipsRequired = u_intTipsRequired * intPlateNumber;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_Bead: "), _intLoadVolume_Bead);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_EtOH: "), _intLoadVolume_EtOH);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intLoadVolume_EB: "), _intLoadVolume_EB);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intTipsRequired: "), _intTipsRequired);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strMagnetType: "), _strMagnetType);
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, Translate("in positions 1-5 on TIP_CAR_NTR on tracks 1-6"), _intTipsRequired, 300, 1, u_strTipCounter);
  _strLoadMessage = StrConcat4(Translate("Please load a plate with "), _intLoadVolume_Bead, Translate("uL of SPRI per well on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResBeads, _strLoadMessage);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResWaste, Translate("Please load an empty waste plate on the flashing position"));
  _strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), _intLoadVolume_EtOH, Translate("ml of ethanol on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResEthanol, _strLoadMessage);
  _strLoadMessage = StrConcat4(Translate("Please load a reservoir containing "), _intLoadVolume_EB, Translate("ml of EB on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.ResElution, _strLoadMessage);
  ML_STAR.SourcePlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" source plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.SourcePlates, _strLoadMessage);
  ML_STAR.BindPlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" bind plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlates, _strLoadMessage);
  ML_STAR.DestinationPlates.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat4(Translate("Please load "), intPlateNumber, Translate(" destination plate(s) on the flashing position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, _strLoadMessage);
  ML_STAR.BindPlatesOnMagnet.SetCount(_intSeqPos);
  _strLoadMessage = StrConcat8(Translate("Please load "), intPlateNumber, Translate(" magnet(s) ("), _strMagnetType, Translate(") on to the flashing position(s)"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.BindPlatesOnMagnet, _strLoadMessage);
  arrCarriers.SetSize(0);
  arrCarriers.AddAsLast(Translate("CAR_NTR_Tip_1"));
  arrCarriers.AddAsLast(Translate("CAR_NTR_Tip_2"));
  arrCarriers.AddAsLast(Translate("CAR_Plt_1"));
  arrCarriers.AddAsLast(Translate("CAR_Plt_2"));
  arrCarriers.AddAsLast(Translate("CAR_Plt_3"));
  if(0){
    arrCarriers.AddAsLast(Translate("CAR_RGT_1"));
  }
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriers);
}

private function _Channels_LabwareTransport( sequence & io_seqSource, sequence & io_seqDestination, variable i_intLabwareType, variable i_blnEjectCoreGrip ) void {
  private variable intGripHeight;
  private variable fltGripWidth;
  if (i_intLabwareType == 1)
  {
    intGripHeight = 10;
    fltGripWidth = 81.75;
  }
  if (i_intLabwareType == 2)
  {
    intGripHeight = 12;
    fltGripWidth = 79.5;
  }
  if (i_intLabwareType == 3)
  {
    intGripHeight = 10;
    fltGripWidth = 82;
  }
  if (i_intLabwareType == 4)
  {
    intGripHeight = 24;
    fltGripWidth = 81.9;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
}

private function A_UserInput(  ) variable {
  private variable o_intPlateNumber;
  private dialog customDialog_3;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("User Input"), u_strWorkflowName, Translate(""));
  GITHUBINTEGRATIONS::check_commit();
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
  customDialog_3.SetCustomDialogProperty( "numeric1.Maximum", u_intMaxPlateNumber );
  customDialog_3.ShowCustomDialog();
  retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  o_intPlateNumber = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
  if (retValueDialog == 2)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
    abort;
  }
  SLACKMESSENGER_V2::SelectMessagingPlatform(1);
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("== o_intPlateNumber: "), o_intPlateNumber);
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("== u_intTipsRequired: "), u_intTipsRequired);
  return (o_intPlateNumber);
}

private function C_PipettingSteps(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  private timer tmrBind;
  private timer tmrPulldown;
  private timer tmrElute;
  private variable intTime_BeadPulldown;
  private variable intTime_Drying;
  private variable intTime_Elute;
  private variable intTime_Bind;
  private variable intTime_EBPulldown;
  private variable intTime_Sim;
  private timer tmrDrying;
  private variable intEtOHRemovalVol;
  private timer tmrPulldown_1;
  private timer tmrPulldown_2;
  private variable loopCounter0;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Pipetting Steps"), u_strWorkflowName, Translate(""));
  intTime_Bind = 180;
  intTime_BeadPulldown = 180;
  intTime_Drying = 180;
  intTime_Elute = 180;
  intTime_EBPulldown = 120;
  if (blnSimulationMode == 1)
  {
    intTime_Sim = 15;
    intTime_Bind = intTime_Sim;
    intTime_BeadPulldown = intTime_Sim;
    intTime_Drying = intTime_Sim;
    intTime_Elute = intTime_Sim;
    intTime_EBPulldown = intTime_Sim;
  }
  HSLHamHeaterShaker::StartTempCtrl(HHS1, 45, 0);
  if(0){
    NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
    {
      for(loopCounter0 = 0; loopCounter0 < intPlateNumber;)
      {
        loopCounter0 = loopCounter0 + 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 0. "), Translate("Diluent Addition"));
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        _PreWet_Mix(ML_STAR.SourcePlates, 80, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 1, 10, 0, 1);
        SeqIncrement(ML_STAR.SourcePlates, 96);
      }
    }
    SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  }
  NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
  _PreWet_Mix(ML_STAR.ResBeads, 40, Translate("DNAP_Tip_300ul_96COREHead_SPRI_Beads_DispenseSurface_Empty"), 0.2, 0, 0, 0);
  {
    for(loopCounter1 = 0; loopCounter1 < intPlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 1. "), Translate("Transfer Beads"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
    }
  }
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  {
    for(loopCounter2 = 0; loopCounter2 < intPlateNumber;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 != 1)
      {
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 2. "), Translate("Transfer Samples"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 3. "), Translate("Incubate Beads"));
      if(0){
        if( 0 == tmrBind.SetTimer(intTime_Bind) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Bind, Translate(" seconds."));
        if( 0 == tmrBind.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.BindPlatesOnMagnet, 2, 1);
      }
      _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.HHS, 2, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
      if( 0 == tmrBind.SetTimer(intTime_Bind) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Bind, Translate(" seconds."));
      if( 0 == tmrBind.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
      _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 4. "), Translate("Pulldown Beads"));
      if (loopCounter2 == 1)
      {
        if( 0 == tmrPulldown_1.SetTimer(intTime_BeadPulldown) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_BeadPulldown, Translate(" seconds."));
      }
      if (loopCounter2 == 2)
      {
        if( 0 == tmrPulldown_2.SetTimer(intTime_BeadPulldown) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_BeadPulldown, Translate(" seconds."));
      }
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlatesOnMagnet);
  {
    for(loopCounter3 = 0; loopCounter3 < intPlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      if (loopCounter3 == 1)
      {
        if( 0 == tmrPulldown_1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (loopCounter3 == 2)
      {
        if( 0 == tmrPulldown_2.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 5. "), Translate("Remove Supernatant"));
      NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      {
        for(loopCounter4 = 0; loopCounter4 < 2;)
        {
          loopCounter4 = loopCounter4 + 1;
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
          _PreWet_Mix(ML_STAR.ResEthanol, 180, Translate("DNAP_Tip_300ul_96COREHead_EtOH_FastDispenseSwap_DispenseSurface_Empty"), 1, 0, 0, 0);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 6. "), Translate("Add Ethanol"));
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 7. "), Translate("Remove Ethanol"));
          intEtOHRemovalVol = 180;
          if (loopCounter4 == 2)
          {
            intEtOHRemovalVol = intEtOHRemovalVol + 10;
          }
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 8. "), Translate("Dry Beads"));
      if(0){
        _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
        if( 0 == tmrDrying.SetTimer(intTime_Drying) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Drying, Translate(" seconds."));
        NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
        if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrDrying.SetTimer(intTime_Drying) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Drying, Translate(" seconds."));
        NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
        if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
      }
      _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.HHS, 2, 0);
      if( 0 == tmrDrying.SetTimer(intTime_Drying) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Drying, Translate(" seconds."));
      NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
      if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlates, 2, 1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 9. "), Translate("Add EB"));
      NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, u_strTipCounter, 300, 0, 1);
      _PreWet_Mix(ML_STAR.ResElution, 52, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 1, 0, 0, 0);
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      _PreWet_Mix(ML_STAR.BindPlates, 40, Translate("DNAP_Tip_300ul_96COREHead_WaterReservoir_DispenseSurface_Empty"), 0.5, 10, 0, 0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 10. "), Translate("Incubate EB"));
      if( 0 == tmrElute.SetTimer(intTime_Elute) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.HHS, 2, 0);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Elute, Translate(" seconds."));
      if( 0 == tmrElute.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
      _Channels_LabwareTransport(ML_STAR.HHS, ML_STAR.BindPlatesOnMagnet, 2, 1);
      if(0){
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 10. "), Translate("Incubate EB"));
        if( 0 == tmrElute.SetTimer(intTime_Elute) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_Elute, Translate(" seconds."));
        if( 0 == tmrElute.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _Channels_LabwareTransport(ML_STAR.BindPlates, ML_STAR.BindPlatesOnMagnet, 2, 1);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 11. "), Translate("Pulldown Beads"));
      if( 0 == tmrPulldown.SetTimer(intTime_EBPulldown) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Starting timer for "), intTime_EBPulldown, Translate(" seconds."));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> *****************************************************************************"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step 12. "), Translate("Recover Sample"));
      if( 0 == tmrPulldown.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      SeqIncrement(ML_STAR.SourcePlates, 96);
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
      SeqIncrement(ML_STAR.DestinationPlates, 96);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.SourcePlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlates);
  SeqResetSequenceIndexes(ML_STAR.BindPlatesOnMagnet);
  SeqResetSequenceIndexes(ML_STAR.DestinationPlates);
}

private function D_MethodComplete(  ) void {
  private variable loopCounter1;
  private variable _intSeqPos;
  SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Completed"));
  {
    for(loopCounter1 = 0; loopCounter1 < intPlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      _Channels_LabwareTransport(ML_STAR.BindPlatesOnMagnet, ML_STAR.BindPlates, 2, 1);
      SeqIncrement(ML_STAR.BindPlates, 96);
      SeqIncrement(ML_STAR.BindPlatesOnMagnet, 96);
    }
  }
  _intSeqPos = 96 * intPlateNumber;
  ML_STAR.DestinationPlates.SetCount(_intSeqPos);
  HSLHamHeaterShaker::StopTempCtrl(HHS1);
  HSLHamHeaterShaker::Terminate();
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTRTips, ML_STAR.NTR_96_Racks, ML_STAR.NTREmptyStack, 1, 300);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.DestinationPlates, Translate("The program is now complete. Please remove and seal your cleaned-up plate(s)"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.NTREmptyStack, Translate("Remove all empty NTR racks and clean down the deck"));
}

private function _PreWet_Mix( sequence & i_seq, variable i_fltVolume, variable i_strLiquidClass, variable i_fltMix_Height, variable i_intMix_Cycles, variable i_blnMix_LiqFollow, variable i_blnTipEject ) void {
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Pre-wet tips / Mix"), u_strWorkflowName, Translate(""));
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  if (i_blnTipEject == 1)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
}
