#include "SangerCleanup\\Deck Layouts\\Template\\Sanger_BeadCleanup_General_STAR_Template.res"
global device ML_STAR ("SangerCleanup\\Deck Layouts\\Template\\Sanger_BeadCleanup_General_STAR_Template.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "NTRDirectUse_WGSPCRXP.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "WSI\\SlackMessenger\\SlackMessenger_V2.hs_" }
 namespace _Method { #include "WSI\\GitHub Integrations\\GitHubIntegrations.hs_" }
variable blnSimulationMode;
variable HHS1;
variable intPlateNumber;
variable u_intMaxPlateNumber;
variable u_intEtOHVolume_Loading;
variable u_intEBVolume_Loading;
variable u_intBeadVolume_Loading;
variable u_intTipsRequired;
variable u_strMagnetType;
dialog customDialog_1;
variable u_strWorkflowName;
dialog customDialog_2;
variable u_strTipCounter;
variable u_intNuncDeadVolume_Loading;
variable retValueDialog;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_InitLibrary();
    SLACKMESSENGER_V2::_InitLibrary();
    GITHUBINTEGRATIONS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    u_intMaxPlateNumber = 2;
    u_intNuncDeadVolume_Loading = 30;
    u_intBeadVolume_Loading = 60;
    u_intEBVolume_Loading = 50;
    u_intEtOHVolume_Loading = 100;
    u_intTipsRequired = 576;
    u_strMagnetType = Translate("Alpaqua 96S Ring Magnet");
    u_strWorkflowName = Translate("WGS_PCR");
    u_strTipCounter = Translate("NTR_300_96MPH");
    u_strWorkflowName = u_strWorkflowName + Translate(" Cleanup");
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Simulation Mode: "), blnSimulationMode);
    if (blnSimulationMode == 1)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
      customDialog_2.ShowCustomDialog();
      retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == 2)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
        abort;
      }
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
    intPlateNumber = A_UserInput();
    B_LoadInstructions();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textHeader.Text", u_strWorkflowName );
    customDialog_1.ShowCustomDialog();
    retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (retValueDialog == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method has been aborted by the user"), Translate(""));
      abort;
    }
    C_PipettingSteps();
    D_MethodComplete();
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_ExitLibrary();
    SLACKMESSENGER_V2::_ExitLibrary();
    GITHUBINTEGRATIONS::_ExitLibrary();
  } }
